#pragma once
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\JsonParser\\JsonParser.hs_"
#include "HSLDevLib.hsl"
#include "HSLErrLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace GRIPPER {
  private function GetPlate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function PlacePlate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
  }

  private function GetPlate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable PlateSequence;
    private variable GripHeight;
    private variable GripWidth;
    private variable GripSpeed;
    private variable GripForce;
    private variable GripperSequence;
    private variable Name;
    private variable OpenWidth;
    private variable CheckPlateExists;
    private variable ZSpeed;
    private sequence ToolSequence;
    private sequence Sequence;
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    private variable GripperLabwareID;
    private variable PlateLabwareID;
    PlateLabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PlateLabwareID:"));
    GripperLabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripperLabwareID:"));
    GripHeight = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripHeight:"));
    GripWidth = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripWidth:"));
    OpenWidth = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:OpenWidth:"));
    GripForce = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripForce:"));
    GripSpeed = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripSpeed:"));
    ZSpeed = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ZSpeed:"));
    CheckPlateExists = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CheckPlateExists:"));
    HSLLabwrAccess::GetTransportSequenceForLabwareID(ML_STAR, PlateLabwareID, Sequence);
    HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, GripperLabwareID, 0, ToolSequence);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_1 ;
      err.Clear();
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      errLabel_1 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function PlacePlate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable XSpeed;
    private variable PlateSequence;
    private variable EjectTool;
    private variable Name;
    private variable PressOnDistance;
    private variable CheckPlateExists;
    private variable ZSpeed;
    private sequence Sequence;
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    private variable PlateLabwareID;
    private variable GripperLabwareID;
    PlateLabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PlateLabwareID:"));
    EjectTool = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:EjectTool:"));
    XSpeed = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:XSpeed:"));
    ZSpeed = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ZSpeed:"));
    PressOnDistance = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PressOnDistance:"));
    CheckPlateExists = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CheckPlateExists:"));
    HSLLabwrAccess::GetTransportSequenceForLabwareID(ML_STAR, PlateLabwareID, Sequence);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_2 ;
      err.Clear();
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "GetPlate")
    {
      GetPlate(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "PlacePlate")
    {
      PlacePlate(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }
} // library namespace
