// {{{ 2 "IncludeGuard" "PragmaOnce"
#pragma once
// }} ""
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\JsonParser\\JsonParser.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLSeqLib.hsl"
#include "HSLTipCountingLib.hsl"
#include "HSLDevLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\StateServerEndpoints\\StateServerEndpoints.hs_"
/* {{ 2 "LibraryInsertLine" "" */ // }} ""
// {{ 2 "TemplateIncludeBlock" ""
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"
// }} ""
// {{{ 2 "LibraryNamespace" "Begin"
namespace _HSLTIPCOUNTINGLIB {
// }} ""
/* {{ 2 "VariableInsertLine" "" */ // }} ""
// {{{ 2 "SubmethodForwardDeclaration" ""
function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
private function _Edit( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
private function _Write( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
// }} ""
function _InitLibrary() {
// {{ 2 "AutoInitBlock" ""
PTL::SetWashingStateDefault("RinseTime1", 5);
PTL::SetWashingStateDefault("SoakTime1", 5);
PTL::SetWashingStateDefault("FlowRate1", 11);
PTL::SetWashingStateDefault("RinseTime2", 0);
PTL::SetWashingStateDefault("SoakTime2", 0);
PTL::SetWashingStateDefault("FlowRate2", 11);
PTL::SetWashingStateDefault("DrainingTime", 10);
PTL::SetWashingStateDefault("StartWashLiquid", 0);
PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
JSONPARSER::_InitLibrary();
ACTIONSERVERENDPOINTS::_InitLibrary();
STATESERVERENDPOINTS::_InitLibrary();
// }} ""
}
function _ExitLibrary() {
// {{ 2 "AutoExitBlock" ""
JSONPARSER::_ExitLibrary();
ACTIONSERVERENDPOINTS::_ExitLibrary();
STATESERVERENDPOINTS::_ExitLibrary();
// }} ""
}
// {{{ 5 "_Write" "Begin"
private function _Write( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
// }} ""
private variable WaitTime;
private variable IsStoppable;
private variable ShowTimer;
private timer Timer;
private variable CustomErrorHandling;
private variable State;
private variable Message;
private object o_JSONObject;
private variable SequenceString;
private variable PropertyValue;
private variable PropertyKey;
private variable LabwareID;
private sequence Sequence;
private object Object;
private variable Counter;
private variable PositionID;
private variable SequencePosition;
private variable TipCounter;
private variable TotalSequencePositions;
private variable LabwareIDs[];
private variable SequencePositions[];
private sequence Seq;
private variable PositionIDs[];
// {{ 5 "_Write" "InitLocals"
// }} ""
// {{{ 67 1 0 "a0686a0d_5187_4ea9_9329c09a2931cdda" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"), LabwareIDs);
// }} ""
// {{{ 68 1 0 "d76f2983_939f_4c66_8335250b8bde21f0" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PositionID:"), PositionIDs);
// }} ""
// {{{ 69 1 0 "ac55654f_6449_4bca_867810185749df09" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
TipCounter = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TipCounter:"));
// }} ""
// {{ 70 1 0 "c1485f9f_77e4_4a71_be598a492de87a9f" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 71 1 0 "9eb8b701_5f76_407c_abe4e2ffcea8d217" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 72 1 0 "f4570088_3ea8_44ed_b84210b75c97ae07" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 73 1 0 "9b7cf929_85d3_4b9c_94055bedf1ab16d0" "{72EACF88-8D49-43e3-92C8-2F90E81E3260}"
TotalSequencePositions=LabwareIDs.GetSize();
// }} ""
// {{ 74 1 0 "53ee6f97_f76f_4ae1_a69a8701b9f04e5e" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
{
for(Counter = 0; Counter < TotalSequencePositions;)
{
Counter = Counter + 1;
// }} ""
// {{{ 75 1 0 "4fbf9560_3dfa_4f72_af20ede7e68c08c1" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
SeqAdd(Seq, LabwareIDs.ElementAt( Counter -1), PositionIDs.ElementAt( Counter -1));
// }} ""
// {{ 76 1 0 "53ee6f97_f76f_4ae1_a69a8701b9f04e5e" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
}
}
// }} ""
// {{ 77 1 0 "f4570088_3ea8_44ed_b84210b75c97ae07" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{{ 78 1 0 "5646747e_605a_4ed5_ac19dcee6176be31" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TotalSequencePositions = SeqGetTotal(Seq);
// }} ""
// {{ 79 1 0 "88c11b15_e9f1_4097_9cdc5557f595a826" "{B31F353C-5D80-11d4-A5EB-0050DA737D89}"
Seq.SetCount(TotalSequencePositions);
// }} ""
// {{ 80 1 0 "4fa3423e_9c31_4683_82fff860a296112a" "{B31F353A-5D80-11d4-A5EB-0050DA737D89}"
Seq.SetCurrentPosition(1);
// }} ""
// {{{ 81 1 0 "54ebd4ab_5ef7_4be0_8ecd465fd7fa7946" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Write2(Seq, TipCounter, ML_STAR);
// }} ""
// {{ 82 1 0 "9eb8b701_5f76_407c_abe4e2ffcea8d217" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{{ 83 1 0 "8be5f2de_0edf_4a70_91aafe3c38f2859b" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLJsonLib::Create(o_JSONObject);
// }} ""
// {{{ 84 1 0 "f70bb6c0_4adf_4601_bacbb8a251842d1a" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
STATESERVERENDPOINTS::RespondToCommand(o_JSONObject);
// }} ""
// {{{ 85 1 0 "3adf1c5a_3721_4546_8457254f90e6b3a9" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLJsonLib::Release(o_JSONObject);
// }} ""
// {{ 86 1 0 "c1485f9f_77e4_4a71_be598a492de87a9f" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{{ 5 "_Write" "End"
}
// }} ""
// {{{ 5 "HandleCommand" "Begin"
function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
// }} ""
// {{ 5 "HandleCommand" "InitLocals"
// }} ""
// {{ 1 1 0 "c360a568_8d25_46e6_90b65b0955c00a04" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (CommandName == "Edit")
{
// }} ""
// {{{ 2 1 0 "36f1db85_f9a0_48ba_b8cba5f9d580bd8f" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
_Edit(ML_STAR, i_EndpointOutputDataJSONObject);
// }} ""
// {{{ 3 1 0 "70160f8d_a9e8_4e2b_b7590a4a5ef2aa32" "{9EC997CD-FD3B-4280-811B-49E99DCF062C}"
return;
// }} ""
// {{ 4 1 0 "c360a568_8d25_46e6_90b65b0955c00a04" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{ 5 1 0 "40bb4488_7844_4d53_85d56dfa5206d549" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
if (CommandName == "Write")
{
// }} ""
// {{{ 6 1 0 "fe864dac_125a_4d52_82bef2cb986102ba" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
_Write(ML_STAR, i_EndpointOutputDataJSONObject);
// }} ""
// {{{ 7 1 0 "8d9e216a_aecb_4a58_88d727253c526f08" "{9EC997CD-FD3B-4280-811B-49E99DCF062C}"
return;
// }} ""
// {{ 8 1 0 "40bb4488_7844_4d53_85d56dfa5206d549" "{B31F3531-5D80-11d4-A5EB-0050DA737D89}"
}
// }} ""
// {{ 9 1 0 "7eba0f5d_73bc_4c95_9aaf8fb35768504f" "{F07B0071-8EFC-11d4-A3BA-002035848439}"
MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
// }} ""
// {{ 10 1 0 "60a5dee6_353e_4d2f_88d4468acb0b851f" "{930D6C31-8EFB-11d4-A3BA-002035848439}"
abort;
// }} ""
// {{{ 5 "HandleCommand" "End"
}
// }} ""
// {{{ 5 "_Edit" "Begin"
private function _Edit( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
// }} ""
private object o_JSONObject;
private variable Counter;
private variable SequenceString;
private variable Counter2;
private variable NumLabwareIDs;
private variable CustomErrorHandling;
private variable PropertyValue;
private variable PropertyKey;
private variable Message;
private variable TotalSequencePositions;
private variable LabwareID;
private variable State;
private sequence Sequence;
private sequence TempSeq;
private variable LabwareIDs[];
private variable PosID;
private sequence Seq;
private variable Timeout;
private variable TipCounter;
private variable TotalPositions;
private variable EndPosition;
private variable CurrentPosition;
private variable IterCurrentPosition;
private object ListItem;
private variable LabID;
private sequence EditedSeq;
private variable DialogTitle;
// {{ 5 "_Edit" "InitLocals"
// }} ""
// {{{ 12 1 0 "52297ab8_5e82_473b_92743afc262f0292" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"), LabwareIDs);
// }} ""
// {{{ 13 1 0 "39e8a7e5_90df_4d7c_b434b80b69cecdf2" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
TipCounter = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TipCounter:"));
// }} ""
// {{{ 14 1 0 "53939312_46b0_409e_94e2a94bd7de1dd7" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
DialogTitle = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DialogTitle:"));
// }} ""
// {{{ 15 1 0 "63e60f59_f5bc_4aeb_b1be7e0e42fabc39" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
Timeout = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Timeout:"));
// }} ""
// {{ 16 1 0 "af40e6a8_bc4d_4ab7_a16fa852e8cdf9a4" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 17 1 0 "10835f62_2add_46c3_8c0bf6e05f68e32b" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 18 1 0 "b97123fc_8d35_4c58_a6246a6e05472b1e" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 19 1 0 "618c2e69_1c75_45b9_b15b07c073564e6b" "{72EACF88-8D49-43e3-92C8-2F90E81E3260}"
NumLabwareIDs=LabwareIDs.GetSize();
// }} ""
// {{ 20 1 0 "9bb5b5dc_0371_45e3_a359944bd83c0390" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
{
for(Counter = 0; Counter < NumLabwareIDs;)
{
Counter = Counter + 1;
// }} ""
// {{ 21 1 0 "05e4bd93_c09f_46fa_a50749661089dd4c" "{67A8F1C9-6546-41e9-AD2F-3C54F7818853}"
LabwareID=LabwareIDs.GetAt(Counter-1);
// }} ""
// {{{ 22 1 0 "a3f371d5_2b55_4e8b_80f7f8aa3212a7a8" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, LabwareID, 0, TempSeq);
// }} ""
// {{{ 23 1 0 "33986efe_4565_4212_b90001aa1a3bbc30" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TotalSequencePositions = SeqGetTotal(TempSeq);
// }} ""
// {{ 24 1 0 "6b1d1b9f_934d_4587_bed952352483e9ae" "{B31F353C-5D80-11d4-A5EB-0050DA737D89}"
TempSeq.SetCount(TotalSequencePositions);
// }} ""
// {{ 25 1 0 "0e3f6d26_8e3d_47eb_990759e5c339a7d0" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
{
for(Counter2 = 0; Counter2 < TotalSequencePositions;)
{
Counter2 = Counter2 + 1;
// }} ""
// {{ 26 1 0 "86635b9e_57c2_400e_8dcaf105e62921cd" "{B31F353A-5D80-11d4-A5EB-0050DA737D89}"
TempSeq.SetCurrentPosition(Counter2);
// }} ""
// {{{ 27 1 0 "c0231769_c46a_466f_af287c4b4f572195" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
PosID = SeqGetPositionId(TempSeq);
// }} ""
// {{{ 28 1 0 "08919f8b_7422_47b9_818825fce05e62b7" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
SeqAdd(Seq, LabwareID, PosID);
// }} ""
// {{ 29 1 0 "0e3f6d26_8e3d_47eb_990759e5c339a7d0" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
}
}
// }} ""
// {{ 30 1 0 "9bb5b5dc_0371_45e3_a359944bd83c0390" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
}
}
// }} ""
// {{ 31 1 0 "b97123fc_8d35_4c58_a6246a6e05472b1e" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 32 1 0 "39475282_ca2d_49e4_a8e75aa59e47fa14" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{{ 33 1 0 "4d1e76f8_189f_47f2_8f5a81e4b3d2b708" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLLabwrAccess::SortSequenceByColumn1(ML_STAR, 6, Seq, Seq);
// }} ""
// {{{ 34 1 0 "392b394a_44c7_457e_abc724bfdede74ad" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
SeqCopySequence(EditedSeq, Seq);
// }} ""
// {{{ 35 1 0 "07772bcf_8da5_4c93_874d798466d9bcb0" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Read2(EditedSeq, TipCounter, ML_STAR);
// }} ""
// {{{ 36 1 0 "410ab8cc_1e69_4e04_83a091fa84032db7" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
DevAddSequence2(ML_STAR, EditedSeq, Seq, 1);
// }} ""
// {{{ 37 1 0 "361e9c6a_355c_4390_80232a4eb7d831a3" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
DevEditSequences(ML_STAR, Translate("Tip Counter Edit"), DialogTitle, 1000);
// }} ""
// {{{ 38 1 0 "e3efaf71_28af_4128_b48e4401d8778598" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
DevRemoveSequences(ML_STAR);
// }} ""
// {{{ 39 1 0 "42313fff_f419_4b0e_8cf700cfcbb13613" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
TipCount::Write2(EditedSeq, TipCounter, ML_STAR);
// }} ""
// {{ 40 1 0 "39475282_ca2d_49e4_a8e75aa59e47fa14" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 41 1 0 "50c4d0b5_f8ac_4007_96e75dc7ba82dc00" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 42 1 0 "b87089c9_cb0a_41d0_8b4e5357356e1b3c" "{B31F353B-5D80-11d4-A5EB-0050DA737D89}"
CurrentPosition = EditedSeq.GetCurrentPosition();
// }} ""
// {{ 43 1 0 "73e19ae0_da07_40ae_95b2e733e44b7cd1" "{B31F353D-5D80-11d4-A5EB-0050DA737D89}"
EndPosition = EditedSeq.GetCount();
// }} ""
// {{ 44 1 0 "6ace9546_1bd4_4004_99c36255c4a1b842" "{B31F3544-5D80-11d4-A5EB-0050DA737D89}"
TotalPositions = EndPosition - CurrentPosition;
// }} ""
// {{ 45 1 0 "b06569ff_6726_430a_88a5269c16cdc7b7" "{B31F3544-5D80-11d4-A5EB-0050DA737D89}"
TotalPositions = TotalPositions + 1;
// }} ""
// {{{ 46 1 0 "d874c87e_ceb6_457a_ab2f5aed795c981b" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLJsonLib::Create(o_JSONObject);
// }} ""
// {{{ 47 1 0 "9b679380_225e_487d_887940f32b316994" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLJsonLib::SetArray(o_JSONObject, Translate("AvailablePositions"));
// }} ""
// {{{ 48 1 0 "a2f7040b_db68_480b_823d09a7d51f8e84" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLJsonLib::SetArrayLength(o_JSONObject, Translate("AvailablePositions"), TotalPositions);
// }} ""
// {{{ 49 1 0 "fac1f32f_1f2d_4f9f_8aead62dcd612340" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLJsonLib::Create(ListItem);
// }} ""
// {{ 50 1 0 "7c64639f_e6ee_4d11_acce7c6310f451e4" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
{
for(Counter = 0; Counter < TotalPositions;)
{
Counter = Counter + 1;
// }} ""
// {{ 51 1 0 "cac04f8e_f393_48da_b439b60a6a50c0da" "{B31F3544-5D80-11d4-A5EB-0050DA737D89}"
IterCurrentPosition = CurrentPosition + Counter;
// }} ""
// {{ 52 1 0 "e1deb94c_b8c4_4860_985402fbe1b94ffe" "{B31F3544-5D80-11d4-A5EB-0050DA737D89}"
IterCurrentPosition = IterCurrentPosition - 1;
// }} ""
// {{ 53 1 0 "9e79cb34_9e3e_4a64_9606abc2dfa549e5" "{B31F353A-5D80-11d4-A5EB-0050DA737D89}"
EditedSeq.SetCurrentPosition(IterCurrentPosition);
// }} ""
// {{{ 54 1 0 "6874c8a4_966b_4751_ac88e4e598b67a6d" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
LabID = SeqGetLabwareId(EditedSeq);
// }} ""
// {{{ 55 1 0 "bafa8be8_f3e0_410e_943fb7a696a22b04" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
PosID = SeqGetPositionId(EditedSeq);
// }} ""
// {{{ 56 1 0 "87aec6b2_78ac_4ca6_80ed951ad6a3d5e3" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLJsonLib::SetStringProperty(ListItem, Translate("LabwareID"), LabID);
// }} ""
// {{{ 57 1 0 "968c6052_feae_4153_afbbb2d03edd1994" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLJsonLib::SetStringProperty(ListItem, Translate("PositionID"), PosID);
// }} ""
// {{{ 58 1 0 "44254c1e_0b7c_421c_a00e3286b5839a18" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLJsonLib::SetJsonArrayElement(o_JSONObject, Translate("AvailablePositions"), Counter, ListItem);
// }} ""
// {{ 59 1 0 "7c64639f_e6ee_4d11_acce7c6310f451e4" "{B31F3532-5D80-11d4-A5EB-0050DA737D89}"
}
}
// }} ""
// {{{ 60 1 0 "350da3b1_d639_4100_b7b770c94bfc3a28" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLJsonLib::Release(ListItem);
// }} ""
// {{ 61 1 0 "50c4d0b5_f8ac_4007_96e75dc7ba82dc00" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{ 62 1 0 "10835f62_2add_46c3_8c0bf6e05f68e32b" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{{ 63 1 0 "90d49907_9559_4467_a43a7e5d6b26c098" "{7C4EF7A7-39BE-406a-897F-71F3A35B4093}"
ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
// }} ""
// {{{ 64 1 0 "4a738f7b_ad6a_413f_96c5fa16d5292a6b" "{C1F3C015-47B3-4514-9407-AC2E65043419}"
HSLJsonLib::Release(o_JSONObject);
// }} ""
// {{ 65 1 0 "af40e6a8_bc4d_4ab7_a16fa852e8cdf9a4" "{586C3429-F931-405f-9938-928E22C90BFA}"

// }} ""
// {{{ 5 "_Edit" "End"
}
// }} ""
/* {{ 2 "SubmethodInsertLine" "" */ // }} ""
// {{{ 2 "LibraryNamespace" "End"
} // library namespace
// }} ""
// $$author=BAREB$$valid=0$$time=2023-11-17 14:26$$checksum=8af992db$$length=084$$