#pragma once
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\JsonParser\\JsonParser.hs_"
#include "HSLDevLib.hsl"
#include "HSLErrLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace IPG {
  private function GetPlate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function PlacePlate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
  }

  private function GetPlate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable PlateSequence;
    private variable GripHeight;
    private variable GripWidth;
    private variable GripForce;
    private variable Name;
    private variable OpenWidth;
    private sequence Sequence;
    private variable InverseGrip;
    private variable CollisionControl;
    private variable LiftupHeight;
    private variable RetractDistance;
    private variable LabwareOrientation;
    private variable GripMode;
    private variable Tolerance;
    private variable Movement;
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    private variable LabwareID;
    private variable PlateLabwareID;
    PlateLabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"));
    GripHeight = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripHeight:"));
    GripMode = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripMode:"));
    GripWidth = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripWidth:"));
    OpenWidth = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:OpenWidth:"));
    Movement = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Movement:"));
    RetractDistance = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistance:"));
    LiftupHeight = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiftupHeight:"));
    LabwareOrientation = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareOrientation:"));
    GripForce = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripForce:"));
    Tolerance = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Tolerance:"));
    InverseGrip = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:InverseGrip:"));
    CollisionControl = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CollisionControl:"));
    HSLLabwrAccess::GetTransportSequenceForLabwareID(ML_STAR, PlateLabwareID, Sequence);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_1 ;
      err.Clear();
      ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
      errLabel_1 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function PlacePlate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable PlateSequence;
    private variable CollisionControl;
    private variable LiftupHeight;
    private variable RetractDistance;
    private variable LabwareOrientation;
    private variable Name;
    private variable Movement;
    private sequence Sequence;
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    private variable PlateLabwareID;
    PlateLabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"));
    Movement = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Movement:"));
    RetractDistance = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistance:"));
    LiftupHeight = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiftupHeight:"));
    LabwareOrientation = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareOrientation:"));
    CollisionControl = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CollisionControl:"));
    HSLLabwrAccess::GetTransportSequenceForLabwareID(ML_STAR, PlateLabwareID, Sequence);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_2 ;
      err.Clear();
      ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "GetPlate")
    {
      GetPlate(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "PlacePlate")
    {
      PlacePlate(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }
} // library namespace
