#pragma once
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\JsonParser\\JsonParser.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSL_LiquidClassLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace LIQUIDCLASS {
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function TestLiquidClassExists( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
  }

  private function TestLiquidClassExists( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    private variable LiquidClassesArray[];
    private variable Counter;
    private variable LiquidClass;
    private variable NumClasses;
    private variable FailedLiquidClasses[];
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("CommandParameters:LiquidClass:"), LiquidClassesArray);
    FailedLiquidClasses.SetSize(0);
    LiquidClassLib::Initialize(ML_STAR, 0);
    NumClasses=LiquidClassesArray.GetSize();
    {
      for(Counter = 0; Counter < NumClasses;)
      {
        Counter = Counter + 1;
        LiquidClass=LiquidClassesArray.GetAt(Counter-1);
        onerror goto errLabel_1 ;
        err.Clear();
        LiquidClassLib::SelectLiquidClass(LiquidClass);
        errLabel_1 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          FailedLiquidClasses.AddAsLast(LiquidClass);
        }   /* end if from skip handler if no error */
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    NumClasses=FailedLiquidClasses.GetSize();
    HSLJsonLib::SetArray(o_JSONObject, Translate("FailedLiquidClasses"));
    HSLJsonLib::SetArrayLength(o_JSONObject, Translate("FailedLiquidClasses"), NumClasses);
    {
      for(Counter = 0; Counter < NumClasses;)
      {
        Counter = Counter + 1;
        LiquidClass=FailedLiquidClasses.GetAt(Counter-1);
        HSLJsonLib::SetStringArrayElement(o_JSONObject, Translate("FailedLiquidClasses"), Counter, LiquidClass);
      }
    }
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "TestLiquidClassExists")
    {
      TestLiquidClassExists(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }
} // library namespace
