#pragma once
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\JsonParser\\JsonParser.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLSeqLib.hsl"
#include "Visual_NTR_library\\Visual_NTR_library.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\StateServerEndpoints\\StateServerEndpoints.hs_"
#include "HSLFilLib.hsl"
#include "HSLStrLib.hsl"
#include "HSLUtilLib.hsl"
#include "HSLTipCountingLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace _VISUAL_NTR_LIBRARY {
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function _Edit( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function _Write( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
    VISUAL_NTR_LIBRARY::_InitLibrary();
    STATESERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    VISUAL_NTR_LIBRARY::_ExitLibrary();
    STATESERVERENDPOINTS::_ExitLibrary();
  }

  private function _Write( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable WaitTime;
    private variable IsStoppable;
    private variable ShowTimer;
    private timer Timer;
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    private variable SequenceString;
    private variable PropertyValue;
    private variable PropertyKey;
    private variable LabwareID;
    private sequence Sequence;
    private object Object;
    private variable Counter;
    private variable PositionID;
    private variable SequencePosition;
    private variable TipCounter;
    private variable TotalSequencePositions;
    private variable LabwareIDs[];
    private variable SequencePositions[];
    private sequence Seq;
    private variable PositionIDs[];
    private variable path_system;
    private variable db_fullPath;
    private variable isSimulation;
    private variable iTipCounterName;
    private variable myTipCounter;
    private variable currentPosition;
    private variable sqlCommand;
    private variable currentLayer;
    private variable endPosition;
    private file TIP_COUNT_READ;
    private file TIP_COUNT_UPDATE;
    private variable Simulated;
    private variable dbPath;
    private variable SystemPath;
    private variable EndPosition;
    private variable CurrentPosition;
    private variable CurrentLayer;
    private variable iNTRTipCounterName;
    private variable Command;
    private variable SQLCommand;
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"), LabwareIDs);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PositionID:"), PositionIDs);
    TipCounter = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TipCounter:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    TotalSequencePositions=LabwareIDs.GetSize();
    {
      for(Counter = 0; Counter < TotalSequencePositions;)
      {
        Counter = Counter + 1;
        SeqAdd(Seq, LabwareIDs.ElementAt( Counter -1), PositionIDs.ElementAt( Counter -1));
      }
    }
    Simulated = Util::GetSimulationMode();
    if (Simulated == 1)
    {
      TipCounter = StrConcat2(TipCounter, Translate("_simulation"));
    }
    SystemPath = FilGetSystemPath();
    dbPath = StrConcat2(SystemPath, Translate("\\CustomizedTipManagement.mdb"));
    SQLCommand = StrConcat4(Translate("SELECT * FROM [TipCounters] WHERE [TipCounter] = '"), TipCounter, Translate("'"), Translate(""));
    TIP_COUNT_READ.AddField("TipCounter", TipCounter, hslString, 255);
    TIP_COUNT_READ.AddField("EndPosition", EndPosition, hslInteger);
    if( 0 == TIP_COUNT_READ.Open(dbPath + " " + "TipCounters", hslAppend, SQLCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, dbPath, "HxMetEdCompCmd");
    }
    if( 0 == TIP_COUNT_READ.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != TIP_COUNT_READ.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TIP_COUNT_READ.RemoveFields();
    TotalSequencePositions = SeqGetTotal(Seq);
    CurrentPosition = EndPosition - TotalSequencePositions;
    CurrentPosition = CurrentPosition + 1;
    SQLCommand = StrConcat8(Translate("UPDATE [TipCounters] SET [CurrentPosition] = "), CurrentPosition, Translate(" WHERE [TipCounter] = '"), TipCounter, Translate("'"), Translate(""), Translate(""), Translate(""));
    TIP_COUNT_UPDATE.AddField("TipCounter", TipCounter, hslString, 255);
    TIP_COUNT_UPDATE.AddField("CurrentPosition", currentPosition, hslInteger);
    if( 0 == TIP_COUNT_UPDATE.Open(dbPath + " " + "TipCounters", hslAppend, SQLCommand) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, dbPath, "HxMetEdCompCmd");
    }
    if( 0 != TIP_COUNT_UPDATE.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    TIP_COUNT_UPDATE.RemoveFields();
    HSLJsonLib::Create(o_JSONObject);
    STATESERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "Channels_TipCounter_Edit")
    {
      _Edit(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Channels_TipCounter_Write")
    {
      _Write(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }

  private function _Edit( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable Counter;
    private variable SequenceString;
    private variable Counter2;
    private variable NumLabwareIDs;
    private variable CustomErrorHandling;
    private variable PropertyValue;
    private variable PropertyKey;
    private variable Message;
    private variable TotalSequencePositions;
    private variable LabwareID;
    private variable State;
    private sequence Sequence;
    private sequence TempSeq;
    private variable LabwareIDs[];
    private variable PosID;
    private sequence Seq;
    private variable Timeout;
    private variable TipCounter;
    private variable TotalPositions;
    private variable EndPosition;
    private variable CurrentPosition;
    private variable IterCurrentPosition;
    private object ListItem;
    private variable LabID;
    private variable DialogTitle;
    private variable Sorting;
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"), LabwareIDs);
    TipCounter = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TipCounter:"));
    DialogTitle = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DialogTitle:"));
    Sorting = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sorting:"));
    Timeout = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Timeout:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    NumLabwareIDs=LabwareIDs.GetSize();
    {
      for(Counter = 0; Counter < NumLabwareIDs;)
      {
        Counter = Counter + 1;
        LabwareID=LabwareIDs.GetAt(Counter-1);
        HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, LabwareID, 0, TempSeq);
        TotalSequencePositions = SeqGetTotal(TempSeq);
        TempSeq.SetCount(TotalSequencePositions);
        {
          for(Counter2 = 0; Counter2 < TotalSequencePositions;)
          {
            Counter2 = Counter2 + 1;
            TempSeq.SetCurrentPosition(Counter2);
            PosID = SeqGetPositionId(TempSeq);
            SeqAdd(Seq, LabwareID, PosID);
          }
        }
      }
    }
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, Seq, TipCounter, DialogTitle, Sorting, Timeout);
    CurrentPosition = Seq.GetCurrentPosition();
    EndPosition = Seq.GetCount();
    TotalPositions = EndPosition - CurrentPosition;
    TotalPositions = TotalPositions + 1;
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetArray(o_JSONObject, Translate("AvailablePositions"));
    HSLJsonLib::SetArrayLength(o_JSONObject, Translate("AvailablePositions"), TotalPositions);
    HSLJsonLib::Create(ListItem);
    {
      for(Counter = 0; Counter < TotalPositions;)
      {
        Counter = Counter + 1;
        IterCurrentPosition = CurrentPosition + Counter;
        IterCurrentPosition = IterCurrentPosition - 1;
        Seq.SetCurrentPosition(IterCurrentPosition);
        LabID = SeqGetLabwareId(Seq);
        PosID = SeqGetPositionId(Seq);
        HSLJsonLib::SetStringProperty(ListItem, Translate("LabwareID"), LabID);
        HSLJsonLib::SetStringProperty(ListItem, Translate("PositionID"), PosID);
        HSLJsonLib::SetJsonArrayElement(o_JSONObject, Translate("AvailablePositions"), Counter, ListItem);
      }
    }
    HSLJsonLib::Release(ListItem);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }
} // library namespace
