#pragma once
#include "Hamilton FlipTubeTool\\Hamilton FlipTubeTool.hsl"
#include "VirtualLabware_V2.hsl"
#include "HSLTrcLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\Temp\\PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\JsonParser\\JsonParser.hs_"
#include "HSLDevLib.hsl"
#include "HSLSeqLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\Temp\\PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Pipette\\Tools\\PipetteTools.hs_"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\Temp\\PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLErrLib.hsl"
#include "HSLJson\\HSLJson.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace FLIPTUBE {
  private function FlipTubeClose( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function FlipTubeCloseSpecial( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function FlipTubeOpen( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function Flip_Tube_Functions( variable int_FlipTubeFunction, sequence & seq_FlipTubeTool, sequence & seq_TubeSequence, variable str_ChannelPattern, variable var_PickUpTool, variable var_EjectTool, device & ML_STAR ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function Initialize( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    PIPETTETOOLS::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    PIPETTETOOLS::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
  }

  private function Initialize( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    FLIPTUBETOOL::Initialize(0);
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Flip_Tube_Functions( variable int_FlipTubeFunction, sequence & seq_FlipTubeTool, sequence & seq_TubeSequence, variable str_ChannelPattern, variable var_PickUpTool, variable var_EjectTool, device & ML_STAR ) void {
    private variable ret_TipToolError;
    if (int_FlipTubeFunction == 1)
    {
      MECC::TraceComment(Translate("=====================\nInitialize Fliptool\n====================="));
      FLIPTUBETOOL::Initialize(0);
    }
    if (int_FlipTubeFunction == 2)
    {
      MECC::TraceComment(Translate("=====================\nOpen Fliptubes\n====================="));
      if (var_PickUpTool == 1)
      {
        FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
      }
      ret_TipToolError = FLIPTUBETOOL::FlipTubeOpen(seq_TubeSequence, 0, str_ChannelPattern);
      if (ret_TipToolError == 0)
      {
        TrcTrace(Translate("***Error*** Flip Tube Open Error, Will Not Abort"), Translate("Extra Step to aid in open will commence"));
      }
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, 12, 0, 0);
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, -12, 0, 0);
      if (var_EjectTool == 1)
      {
        FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
      }
    }
    if (int_FlipTubeFunction == 3)
    {
      MECC::TraceComment(Translate("=====================\nClose Fliptubes Fliptubes\n====================="));
      if (var_PickUpTool == 1)
      {
        FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
      }
      FLIPTUBETOOL::FlipTubeClose(seq_TubeSequence, 0, str_ChannelPattern);
      if (var_EjectTool == 1)
      {
        FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
      }
    }
    if (int_FlipTubeFunction == 4)
    {
      MECC::TraceComment(Translate("=====================\nSpecial Close Fliptubes\n====================="));
      if (var_PickUpTool == 1)
      {
        FLIPTUBETOOL::ToolsPickUp(str_ChannelPattern, seq_FlipTubeTool);
      }
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, -10, -15, 0);
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      VIRTUALLABWARE_V2::MoveSeq(ML_STAR, seq_TubeSequence, 10, 15, 0);
      FLIPTUBETOOL::FlipTubeClose(seq_TubeSequence, 0, str_ChannelPattern);
      if (var_EjectTool == 1)
      {
        FLIPTUBETOOL::ToolsEject(seq_FlipTubeTool);
      }
    }
  }

  private function FlipTubeOpen( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable SequenceArray[];
    private variable SequencePositionArray[];
    private variable NameArray[];
    private variable ToolSequenceArray[];
    private sequence Sequence;
    private sequence ToolSequence;
    private variable Counter;
    private variable NumLids;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"), NameArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ToolSequence:"), ToolSequenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sequence:"), SequenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SequencePosition:"), SequencePositionArray);
    PIPETTETOOLS::CreateSequence(ML_STAR, SequenceArray, SequencePositionArray, Sequence);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    NumLids = SeqGetTotal(Sequence);
    Sequence.SetCount(NumLids);
    DevGetSequenceRef(ML_STAR, ToolSequenceArray.ElementAt( 1 -1), ToolSequence);
    FLIPTUBETOOL::ToolsPickUp(Translate("1000000000000"), ToolSequence);
    {
      for(Counter = 0; Counter < NumLids;)
      {
        Counter = Counter + 1;
        Sequence.SetCurrentPosition(Counter);
        Flip_Tube_Functions(2, ToolSequence, Sequence, Translate("1000000000000"), 0, 0, ML_STAR);
      }
    }
    FLIPTUBETOOL::ToolsEject(ToolSequence);
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function FlipTubeClose( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable Counter;
    private variable NumLids;
    private sequence ToolSequence;
    private sequence Sequence;
    private variable SequenceArray[];
    private variable NameArray[];
    private variable SequencePositionArray[];
    private variable ToolSequenceArray[];
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable RequestID;
    private variable Message;
    private object o_JSONObject;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"), NameArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ToolSequence:"), ToolSequenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sequence:"), SequenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SequencePosition:"), SequencePositionArray);
    PIPETTETOOLS::CreateSequence(ML_STAR, SequenceArray, SequencePositionArray, Sequence);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    NumLids = SeqGetTotal(Sequence);
    Sequence.SetCount(NumLids);
    DevGetSequenceRef(ML_STAR, ToolSequenceArray.ElementAt( 1 -1), ToolSequence);
    FLIPTUBETOOL::ToolsPickUp(Translate("1000000000000"), ToolSequence);
    {
      for(Counter = 0; Counter < NumLids;)
      {
        Counter = Counter + 1;
        Sequence.SetCurrentPosition(Counter);
        Flip_Tube_Functions(3, ToolSequence, Sequence, Translate("1000000000000"), 0, 0, ML_STAR);
      }
    }
    FLIPTUBETOOL::ToolsEject(ToolSequence);
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function FlipTubeCloseSpecial( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable Counter;
    private variable NumLids;
    private sequence ToolSequence;
    private sequence Sequence;
    private variable SequenceArray[];
    private variable NameArray[];
    private variable SequencePositionArray[];
    private variable ToolSequenceArray[];
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"), NameArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ToolSequence:"), ToolSequenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sequence:"), SequenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SequencePosition:"), SequencePositionArray);
    PIPETTETOOLS::CreateSequence(ML_STAR, SequenceArray, SequencePositionArray, Sequence);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    NumLids = SeqGetTotal(Sequence);
    Sequence.SetCount(NumLids);
    DevGetSequenceRef(ML_STAR, ToolSequenceArray.ElementAt( 1 -1), ToolSequence);
    FLIPTUBETOOL::ToolsPickUp(Translate("1000000000000"), ToolSequence);
    {
      for(Counter = 0; Counter < NumLids;)
      {
        Counter = Counter + 1;
        Sequence.SetCurrentPosition(Counter);
        Flip_Tube_Functions(4, ToolSequence, Sequence, Translate("1000000000000"), 0, 0, ML_STAR);
      }
    }
    FLIPTUBETOOL::ToolsEject(ToolSequence);
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "Initialize")
    {
      Initialize(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Open")
    {
      FlipTubeOpen(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Close")
    {
      FlipTubeClose(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "CloseSpecial")
    {
      FlipTubeCloseSpecial(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }
} // library namespace
