#pragma once
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\JsonParser\\JsonParser.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLDevLib.hsl"
#include "HSLSeqLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Pipette\\Tools\\SetCuttedTipType_Universal_V2.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace CUTTEDTIPTYPE {
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function ResetAllTipTypes( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function SetCuttedTipTypeByLength( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::_ExitLibrary();
  }

  private function ResetAllTipTypes( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::ResetAllTipTypes(ML_STAR);
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "ResetAllTipTypes")
    {
      ResetAllTipTypes(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "SetCuttedTipTypeByLength")
    {
      SetCuttedTipTypeByLength(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }

  private function SetCuttedTipTypeByLength( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable CustomErrorHandling;
    private variable Message;
    private variable State;
    private variable CutLength;
    private variable TipType;
    TipType = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TipType:"));
    CutLength = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CutLength:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    SETCUTTEDTIPTYPE_UNIVERSAL_V2::SetCuttedTipTypeByLength(ML_STAR, TipType, CutLength);
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }
} // library namespace
