#pragma once
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\JsonParser\\JsonParser.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\ClosedContainer\\FlipTube\\Fliptube.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Pipette_8Channel\\Pipette_8Channel.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Pipette_96Channel\\Pipette_96Channel.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\TemperatureControl\\HeaterCooler\\HeaterCooler.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\TemperatureControl\\HeaterShaker\\HeaterShaker.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Timer\\Timer.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Transport\\Gripper\\Gripper.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Transport\\IPG\\IPG.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Vacuum\\Vacuum.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLTrcLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\StateServerEndpoints\\StateServerEndpoints.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\Logger\\Logger.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\DeckLoadingDialog\\DeckLoadingDialog.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\CuttedTipType\\CuttedTipType.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\LabwareAccess\\LabwareAccess.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\LiquidClasses\\LiquidClasses.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\_HSLTipCountingLib\\_HSLTipCountingLib.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\_Visual_NTR_Library\\_Visual_NTR_Library.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace DRIVER {
  variable ServerIsActive("True");
  function Abort(  ) void ;
  function ActionServerProcess( device & ML_STAR ) void ;
  function ServeRequest( device & ML_STAR, object & i_JSONObject ) void ;
  function StateServerProcess( device & ML_STAR ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    FLIPTUBE::_InitLibrary();
    PIPETTE_8CHANNEL::_InitLibrary();
    PIPETTE_96CHANNEL::_InitLibrary();
    HEATERCOOLER::_InitLibrary();
    HEATERSHAKER::_InitLibrary();
    TIMER::_InitLibrary();
    GRIPPER::_InitLibrary();
    IPG::_InitLibrary();
    VACUUM::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
    STATESERVERENDPOINTS::_InitLibrary();
    LOGGER::_InitLibrary();
    DECKLOADINGDIALOG::_InitLibrary();
    CUTTEDTIPTYPE::_InitLibrary();
    LABWAREACCESS::_InitLibrary();
    LIQUIDCLASSES::_InitLibrary();
    _HSLTIPCOUNTINGLIB::_InitLibrary();
    _VISUAL_NTR_LIBRARY::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    FLIPTUBE::_ExitLibrary();
    PIPETTE_8CHANNEL::_ExitLibrary();
    PIPETTE_96CHANNEL::_ExitLibrary();
    HEATERCOOLER::_ExitLibrary();
    HEATERSHAKER::_ExitLibrary();
    TIMER::_ExitLibrary();
    GRIPPER::_ExitLibrary();
    IPG::_ExitLibrary();
    VACUUM::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    STATESERVERENDPOINTS::_ExitLibrary();
    LOGGER::_ExitLibrary();
    DECKLOADINGDIALOG::_ExitLibrary();
    CUTTEDTIPTYPE::_ExitLibrary();
    LABWAREACCESS::_ExitLibrary();
    LIQUIDCLASSES::_ExitLibrary();
    _HSLTIPCOUNTINGLIB::_ExitLibrary();
    _VISUAL_NTR_LIBRARY::_ExitLibrary();
  }

  function ServeRequest( device & ML_STAR, object & i_JSONObject ) void {
    private object EndpointOutputDataJSONObject;
    private variable ModuleName;
    private variable CommandName;
    private variable JSONObjectString;
    MECC::TraceComment(Translate("\n\n###################### START COMMAND ###################### "));
    JSONPARSER::GetEndpointOutputData(i_JSONObject, EndpointOutputDataJSONObject);
    HSLJsonLib::GetJson(EndpointOutputDataJSONObject, JSONObjectString);
    TrcTrace(Translate(""), JSONObjectString);
    ModuleName = JSONPARSER::GetJSONElement(EndpointOutputDataJSONObject, Translate("Module Name:"));
    CommandName = JSONPARSER::GetJSONElement(EndpointOutputDataJSONObject, Translate("Command Name:"));
    if (ModuleName == "Hamilton ClosedContainer FlipTube")
    {
      FLIPTUBE::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Hamilton CuttedTipType")
    {
      CUTTEDTIPTYPE::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Hamilton LabwareAccess")
    {
      LABWAREACCESS::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Hamilton LiquidClass")
    {
      LIQUIDCLASSES::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Hamilton DeckLoadingDialog")
    {
      DECKLOADINGDIALOG::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Hamilton Pipette PortraitCORE8Channel")
    {
      PIPETTE_8CHANNEL::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Hamilton Pipette CORE96Head")
    {
      PIPETTE_96CHANNEL::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Hamilton TemperatureControl HeaterCooler")
    {
      HEATERCOOLER::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Hamilton TemperatureControl HeaterShaker")
    {
      HEATERSHAKER::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Hamilton Timer")
    {
      TIMER::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Hamilton Tip HSLTipCountingLib")
    {
      _HSLTIPCOUNTINGLIB::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Hamilton Tip Visual_NTR_Library")
    {
      _VISUAL_NTR_LIBRARY::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Hamilton Transport COREGripper")
    {
      GRIPPER::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Hamilton Transport IPG")
    {
      IPG::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    if (ModuleName == "Hamilton Vacuum")
    {
      VACUUM::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nModule not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }

  function ActionServerProcess( device & ML_STAR ) void {
    private variable None;
    private object JSONObject;
    private variable IsReady;
    private variable Return;
    {
      None = 0;
      while ("Infinite" == "Infinite")
      {
        None = None + 1;
        IsReady = ACTIONSERVERENDPOINTS::GetNextCommand(600, JSONObject);
        if (IsReady != 0)
        {
          LOGGER::TraceComment(Translate("Action Server Command Processing"));
          ServeRequest(ML_STAR, JSONObject);
        }
        else
        {
          Return = ACTIONSERVERENDPOINTS::ServerIsAlive();
          if (Return == 0)
          {
            abort;
          }
        }
      }
    }
  }

  function StateServerProcess( device & ML_STAR ) void {
    private object JSONObject;
    private variable IsReady;
    private variable None;
    private variable Return;
    {
      None = 0;
      while ("Infinite" == "Infinite")
      {
        None = None + 1;
        IsReady = STATESERVERENDPOINTS::GetNextCommand(600, JSONObject);
        if (IsReady != 0)
        {
          LOGGER::TraceComment(Translate("State Server Command Processing"));
          ServeRequest(ML_STAR, JSONObject);
        }
        else
        {
          Return = STATESERVERENDPOINTS::ServerIsAlive();
          if (Return == 0)
          {
            abort;
          }
        }
      }
    }
  }

  function Abort(  ) void {
    STATESERVERENDPOINTS::ServerKill();
    ACTIONSERVERENDPOINTS::ServerKill();
  }
} // library namespace
