#pragma once
#include "HSLSeqLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\JsonParser\\JsonParser.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Pipette\\Tools\\PipetteTools.hs_"
#include "HSLErrLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Pipette\\Tools\\STAR_Channel_MPH_fwCmd.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace _8CHANNEL {
  private function Aspirate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function Dispense( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function Eject( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function FW_AspDis( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function Pickup( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    PIPETTETOOLS::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
    STAR_CHANNEL_MPH_FWCMD::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    PIPETTETOOLS::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    STAR_CHANNEL_MPH_FWCMD::_ExitLibrary();
  }

  private function Aspirate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ChannelSelection;
    private sequence Sequence;
    private variable RetractDistanceArray[];
    private variable MaxHeightDifferenceArray[];
    private variable SequenceArray[];
    private variable VolumeArray[];
    private variable MixCyclesArray[];
    private variable LiquidClassArray[];
    private variable SubmergeDepthArray[];
    private variable cLLDArray[];
    private variable ModeArray[];
    private variable SequencePositionArray[];
    private variable pLLDArray[];
    private variable MixVolumeArray[];
    private variable MixPositionArray[];
    private variable LiquidFollowingArray[];
    private variable FixedHeightArray[];
    private variable SeqEnd;
    private variable ChannelNumberArray[];
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sequence:"), SequenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SequencePosition:"), SequencePositionArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Volume:"), VolumeArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Mode:"), ModeArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidClass:"), LiquidClassArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CapacitiveLiquidLevelDetection:"), cLLDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SubmergeDepth:"), SubmergeDepthArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PressureLiquidLevelDetection:"), pLLDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MaxHeightDifference:"), MaxHeightDifferenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:FixHeightFromBottom:"), FixedHeightArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistanceForTransportAir:"), RetractDistanceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumber:"), ChannelNumberArray);
    ChannelSelection = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumberString:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidFollowing:"), LiquidFollowingArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixCycles:"), MixCyclesArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixPosition:"), MixPositionArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixVolume:"), MixVolumeArray);
    PIPETTETOOLS::PadArray(VolumeArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(ModeArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(LiquidClassArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(cLLDArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(SubmergeDepthArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(pLLDArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(MaxHeightDifferenceArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(FixedHeightArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(RetractDistanceArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(LiquidFollowingArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(MixCyclesArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(MixPositionArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(MixVolumeArray, ChannelNumberArray);
    PIPETTETOOLS::CreateSequence(ML_STAR, SequenceArray, SequencePositionArray, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_1 ;
      err.Clear();
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      errLabel_1 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Dispense( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ChannelSelection;
    private variable SeqEnd;
    private sequence Sequence;
    private variable RetractDistanceArray[];
    private variable SequenceArray[];
    private variable VolumeArray[];
    private variable MixCyclesArray[];
    private variable LiquidClassArray[];
    private variable SideTouchArray[];
    private variable SubmergeDepthArray[];
    private variable cLLDArray[];
    private variable ModeArray[];
    private variable ChannelNumberArray[];
    private variable SequencePositionArray[];
    private variable MixVolumeArray[];
    private variable MixPositionArray[];
    private variable LiquidFollowingArray[];
    private variable FixedHeightArray[];
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sequence:"), SequenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SequencePosition:"), SequencePositionArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Volume:"), VolumeArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Mode:"), ModeArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:FixHeightFromBottom:"), FixedHeightArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistanceForTransportAir:"), RetractDistanceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CapacitiveLiquidLevelDetection:"), cLLDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SubmergeDepth:"), SubmergeDepthArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SideTouch:"), SideTouchArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumber:"), ChannelNumberArray);
    ChannelSelection = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumberString:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidClass:"), LiquidClassArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidFollowing:"), LiquidFollowingArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixCycles:"), MixCyclesArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixPosition:"), MixPositionArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixVolume:"), MixVolumeArray);
    PIPETTETOOLS::PadArray(VolumeArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(ModeArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(FixedHeightArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(RetractDistanceArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(cLLDArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(SubmergeDepthArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(SideTouchArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(LiquidClassArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(LiquidFollowingArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(MixCyclesArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(MixPositionArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(MixVolumeArray, ChannelNumberArray);
    PIPETTETOOLS::CreateSequence(ML_STAR, SequenceArray, SequencePositionArray, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_2 ;
      err.Clear();
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Pickup( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ChannelSelection;
    private variable SeqEnd;
    private sequence Sequence;
    private variable SequenceArray[];
    private variable ChannelNumberArray[];
    private variable SequencePositionArray[];
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumber:"), ChannelNumberArray);
    ChannelSelection = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumberString:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sequence:"), SequenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SequencePosition:"), SequencePositionArray);
    PIPETTETOOLS::CreateSequence(ML_STAR, SequenceArray, SequencePositionArray, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_3 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Eject( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ChannelSelection;
    private variable SeqEnd;
    private sequence Sequence;
    private variable SequenceArray[];
    private variable ChannelNumberArray[];
    private variable SequencePositionArray[];
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumber:"), ChannelNumberArray);
    ChannelSelection = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumberString:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sequence:"), SequenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SequencePosition:"), SequencePositionArray);
    PIPETTETOOLS::CreateSequence(ML_STAR, SequenceArray, SequencePositionArray, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_4 ;
      err.Clear();
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      errLabel_4 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "Pickup")
    {
      Pickup(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Aspirate")
    {
      Aspirate(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Dispense")
    {
      Dispense(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Eject")
    {
      Eject(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "FW_AspDis")
    {
      FW_AspDis(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }

  private function FW_AspDis( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable DispenseVariable;
    private variable DispenseBlowoutVolume;
    private variable DispenseTraverseBeforeDispense;
    private variable DispenseFixHeightFromBottom;
    private variable AspirateFixHeightFromBottom;
    private variable SettlingTimeStoppable;
    private variable AspirateRetractDistanceForTransportAir;
    private variable CustomErrorHandling;
    private variable DispenseVolume;
    private variable LLDSearchHeight;
    private variable AspirateBlowoutVolume;
    private variable DispenseTraverseAfterDispense;
    private variable LiquidClass;
    private variable Message;
    private variable AspirateTraverseBeforeAspirate;
    private variable DispenseAdditionalSettlingTime;
    private variable State;
    private variable SeqEnd;
    private variable AspirateVolume;
    private variable AspirateTraverseAfterAspirate;
    private variable AspirateAdditionalSettlingTime;
    private variable AspirateVariable;
    private sequence Sequence;
    private variable ChannelSelection;
    private variable SequencePositionArray[];
    private variable SequenceArray[];
    ChannelSelection = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumberString:"));
    LLDSearchHeight = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LLDSearchHeight:"));
    LiquidClass = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidClass:"));
    SettlingTimeStoppable = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SettlingTimeStoppable:"));
    AspirateVariable = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Aspirate:"));
    AspirateTraverseBeforeAspirate = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateTraverseBeforeAspirate:"));
    AspirateTraverseAfterAspirate = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateTraverseAfterAspirate:"));
    AspirateFixHeightFromBottom = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateFixHeightFromBottom:"));
    AspirateRetractDistanceForTransportAir = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateRetractDistanceForTransportAir:"));
    AspirateVolume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateVolume:"));
    AspirateAdditionalSettlingTime = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateAdditionalSettlingTime:"));
    AspirateBlowoutVolume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateBlowoutVolume:"));
    DispenseVariable = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Dispense:"));
    DispenseTraverseBeforeDispense = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseTraverseBeforeDispense:"));
    DispenseTraverseAfterDispense = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseTraverseAfterDispense:"));
    DispenseFixHeightFromBottom = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseFixHeightFromBottom:"));
    DispenseVolume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseVolume:"));
    DispenseAdditionalSettlingTime = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseAdditionalSettlingTime:"));
    DispenseBlowoutVolume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseBlowoutVolume:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SequencePosition:"), SequencePositionArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sequence:"), SequenceArray);
    PIPETTETOOLS::CreateSequence(ML_STAR, SequenceArray, SequencePositionArray, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_5 ;
      err.Clear();
      STAR_CHANNEL_MPH_FWCMD::_Channels_Asp_Disp(ChannelSelection, AspirateVariable, DispenseVariable, Sequence, AspirateTraverseBeforeAspirate, AspirateTraverseAfterAspirate, DispenseTraverseBeforeDispense, DispenseTraverseAfterDispense, LiquidClass, LLDSearchHeight, AspirateFixHeightFromBottom, AspirateRetractDistanceForTransportAir, AspirateVolume, AspirateBlowoutVolume, AspirateAdditionalSettlingTime, DispenseFixHeightFromBottom, DispenseVolume, DispenseBlowoutVolume, DispenseAdditionalSettlingTime, SettlingTimeStoppable, ML_STAR);
      errLabel_5 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      STAR_CHANNEL_MPH_FWCMD::_Channels_Asp_Disp(ChannelSelection, AspirateVariable, DispenseVariable, Sequence, AspirateTraverseBeforeAspirate, AspirateTraverseAfterAspirate, DispenseTraverseBeforeDispense, DispenseTraverseAfterDispense, LiquidClass, LLDSearchHeight, AspirateFixHeightFromBottom, AspirateRetractDistanceForTransportAir, AspirateVolume, AspirateBlowoutVolume, AspirateAdditionalSettlingTime, DispenseFixHeightFromBottom, DispenseVolume, DispenseBlowoutVolume, DispenseAdditionalSettlingTime, SettlingTimeStoppable, ML_STAR);
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }
} // library namespace
