#pragma once
#include "Hamilton HeaterCooler\\HamiltonHeaterCooler.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\JsonParser\\JsonParser.hs_"
#include "HSLStrLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\StateServerEndpoints\\StateServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace HEATERCOOLER {
  private function Connect( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function GetTemperature( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function StartTemperatureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function StopTemperatureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
    STATESERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    STATESERVERENDPOINTS::_ExitLibrary();
  }

  private function Connect( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ComPort;
    private variable Name;
    private variable Trash;
    private variable HandleArray[];
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    ComPort = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ComPort:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HamiltonHeaterCooler::Connect(ComPort, 0, Trash, HandleArray);
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("HandleID"), HandleArray.ElementAt( 1 -1));
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function StartTemperatureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable HandleID;
    private variable Temperature;
    private variable Name;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    private variable HandleArray[];
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    HandleID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:HandleID:"));
    Temperature = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Temperature:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HamiltonHeaterCooler::SetTemperature(HandleID, Temperature, Temperature, Temperature, HamiltonHeaterCooler::_FALSE, 0);
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function StopTemperatureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable HandleID;
    private variable Name;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    private variable HandleArray[];
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    HandleID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:HandleID:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HamiltonHeaterCooler::StopTemperatureControl(HandleID);
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function GetTemperature( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable HandleID;
    private variable Temperature;
    private variable Name;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    private variable HandleArray[];
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    HandleID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:HandleID:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HamiltonHeaterCooler::GetTemperature(HandleID, Temperature);
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetFloatProperty(o_JSONObject, Translate("Temperature"), Temperature);
    STATESERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "Connect")
    {
      Connect(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "StartTemperatureControl")
    {
      StartTemperatureControl(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "GetTemperature")
    {
      GetTemperature(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "StopTemperatureControl")
    {
      StopTemperatureControl(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }
} // library namespace
