#pragma once
#include "HslHamHeaterShakerLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\JsonParser\\JsonParser.hs_"
#include "HSLStrLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\StateServerEndpoints\\StateServerEndpoints.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace HEATERSHAKER {
  private function Connect( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function GetShakingSpeed( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function GetTemperature( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function SetPlateLock( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function StartShakeControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function StartTemperatureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function StopShakeControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function StopTemperatureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
    STATESERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    STATESERVERENDPOINTS::_ExitLibrary();
  }

  private function Connect( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ComPort;
    private variable Name;
    private variable HandleID;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    private variable HandleArray[];
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    ComPort = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ComPort:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HSLHamHeaterShaker::CreateUsbDevice(ComPort, HandleID);
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetIntegerProperty(o_JSONObject, Translate("HandleID"), HandleID);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function StartTemperatureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable HandleID;
    private variable Temperature;
    private variable Name;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    HandleID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:HandleID:"));
    Temperature = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Temperature:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HSLHamHeaterShaker::StartTempCtrl(HandleID, Temperature, 0);
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function StopTemperatureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable HandleID;
    private variable Name;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    HandleID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:HandleID:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HSLHamHeaterShaker::StopTempCtrl(HandleID);
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function StartShakeControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable HandleID;
    private variable ShakingSpeed;
    private variable Name;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    HandleID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:HandleID:"));
    ShakingSpeed = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ShakingSpeed:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HSLHamHeaterShaker::StartShaker(HandleID, ShakingSpeed);
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function StopShakeControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable HandleID;
    private variable Name;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    HandleID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:HandleID:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HSLHamHeaterShaker::StopShaker(HandleID);
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function GetTemperature( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable HandleID;
    private variable Name;
    private variable Temperature;
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    HandleID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:HandleID:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HSLHamHeaterShaker::GetTemperature(HandleID, Temperature);
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetFloatProperty(o_JSONObject, Translate("Temperature"), Temperature);
    STATESERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function GetShakingSpeed( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable HandleID;
    private variable Name;
    private variable ShakingSpeed;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    private variable Temperature;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    HandleID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:HandleID:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HSLHamHeaterShaker::GetShakerSpeed(HandleID, ShakingSpeed);
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetIntegerProperty(o_JSONObject, Translate("ShakingSpeed"), ShakingSpeed);
    STATESERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "Connect")
    {
      Connect(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "SetPlateLock")
    {
      SetPlateLock(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "StartTemperatureControl")
    {
      StartTemperatureControl(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "GetTemperature")
    {
      GetTemperature(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "StopTemperatureControl")
    {
      StopTemperatureControl(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "StartShakeControl")
    {
      StartShakeControl(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "GetShakingSpeed")
    {
      GetShakingSpeed(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "StopShakeControl")
    {
      StopShakeControl(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }

  private function SetPlateLock( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable PlateLockState;
    private variable CustomErrorHandling;
    private variable HandleID;
    private variable Name;
    private variable Message;
    private variable State;
    private variable RequestID;
    private variable Values[];
    private variable Keys[];
    private object o_JSONObject;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    HandleID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:HandleID:"));
    PlateLockState = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PlateLockState:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    HSLHamHeaterShaker::SetPlateLock(HandleID, PlateLockState);
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }
} // library namespace
