#pragma once
#include "HSLDevLib.hsl"
#include "HSLTipCountingLib.hsl"
#include "HSLSeqLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\JsonParser\\JsonParser.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\StateServerEndpoints\\StateServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace FTR {
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function LoadTips( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function TipsAvailable( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function TipsRemaining( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
    STATESERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    STATESERVERENDPOINTS::_ExitLibrary();
  }

  private function LoadTips( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable Name;
    private variable TipSequence;
    private sequence Sequence;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    private variable HandleID;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    TipSequence = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TipSequence:"));
    DevGetSequenceRef(ML_STAR, TipSequence, Sequence);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    TipCount::Edit2(Sequence, TipSequence, ML_STAR, 99999);
    TipCount::Write2(Sequence, TipSequence, ML_STAR);
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function TipsAvailable( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable TipSequence;
    private variable NumPositions;
    private variable Name;
    private sequence Sequence;
    private variable EndPosition;
    private variable CurrentPosition;
    private variable PositionsLeft;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    TipSequence = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TipSequence:"));
    NumPositions = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:NumPositions:"));
    DevGetSequenceRef(ML_STAR, TipSequence, Sequence);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    CurrentPosition = Sequence.GetCurrentPosition();
    EndPosition = Sequence.GetCount();
    PositionsLeft = EndPosition - CurrentPosition;
    PositionsLeft = PositionsLeft + 1;
    if (CurrentPosition == 0)
    {
      PositionsLeft = 0 + 0;
    }
    if (PositionsLeft < NumPositions)
    {
      Sequence.SetCurrentPosition(0);
      State = 0;
      Message = Translate("Not enough tips available. Please load more tips.");
      HSLJsonLib::Create(o_JSONObject);
      HSLJsonLib::SetIntegerProperty(o_JSONObject, Translate("TipPosition"), 0);
      ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
      HSLJsonLib::Release(o_JSONObject);
      return;
    }
    TipCount::Write2(Sequence, TipSequence, ML_STAR);
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetIntegerProperty(o_JSONObject, Translate("TipPosition"), CurrentPosition);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function TipsRemaining( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable CurrentPosition;
    private variable CustomErrorHandling;
    private variable TipSequence;
    private variable Remaining;
    private variable Name;
    private variable AbsoluteEnd;
    private variable State;
    private sequence Sequence;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    private variable ShakingSpeed;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    TipSequence = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TipSequence:"));
    DevGetSequenceRef(ML_STAR, TipSequence, Sequence);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    CurrentPosition = Sequence.GetCurrentPosition();
    AbsoluteEnd = SeqGetTotal(Sequence);
    Remaining = AbsoluteEnd - CurrentPosition;
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetIntegerProperty(o_JSONObject, Translate("NumRemaining"), Remaining);
    STATESERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "LoadTips")
    {
      LoadTips(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "TipsAvailable")
    {
      TipsAvailable(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "TipsRemaining")
    {
      TipsRemaining(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }
} // library namespace
