#pragma once
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\AutomationBareNecessities\\ABN\\AutomationBareNecessitiesMethod\\Library\\ABNWebServerCommands\\JSONParser\\WebServerJSONParser.hs_"
#include "HSLDevLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\AutomationBareNecessities\\ABN\\AutomationBareNecessitiesMethod\\Library\\ABNWebServerCommands\\ABNWebServerCommands.hs_"
#include "HSLErrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace GRIPPER {
  private function GetPlate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function PlacePlate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    WEBSERVERJSONPARSER::_InitLibrary();
    ABNWEBSERVERCOMMANDS::_InitLibrary();
  }
  function _ExitLibrary() {
    WEBSERVERJSONPARSER::_ExitLibrary();
    ABNWEBSERVERCOMMANDS::_ExitLibrary();
  }

  private function GetPlate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable PlateSequence;
    private variable GripHeight;
    private variable GripWidth;
    private variable GripSpeed;
    private variable GripForce;
    private variable GripperSequence;
    private variable Name;
    private variable OpenWidth;
    private variable CheckPlateExists;
    private variable ZSpeed;
    private sequence ToolSequence;
    private sequence Sequence;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    RequestID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    PlateSequence = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PlateSequence:"));
    GripperSequence = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripperSequence:"));
    GripHeight = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripHeight:"));
    GripWidth = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripWidth:"));
    OpenWidth = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:OpenWidth:"));
    GripForce = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripForce:"));
    GripSpeed = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripSpeed:"));
    ZSpeed = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ZSpeed:"));
    CheckPlateExists = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CheckPlateExists:"));
    DevGetSequenceRef(ML_STAR, PlateSequence, Sequence);
    DevGetSequenceRef(ML_STAR, GripperSequence, ToolSequence);
    CustomErrorHandling = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_1 ;
      err.Clear();
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      errLabel_1 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    }
    Keys.SetSize(0);
    Values.SetSize(0);
    ABNWEBSERVERCOMMANDS::DriverRespond(State, RequestID, Message, Keys, Values);
  }

  private function PlacePlate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable XSpeed;
    private variable PlateSequence;
    private variable EjectTool;
    private variable Name;
    private variable PressOnDistance;
    private variable CheckPlateExists;
    private variable ZSpeed;
    private sequence Sequence;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    RequestID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    PlateSequence = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PlateSequence:"));
    EjectTool = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:EjectTool:"));
    XSpeed = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:XSpeed:"));
    ZSpeed = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ZSpeed:"));
    PressOnDistance = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PressOnDistance:"));
    CheckPlateExists = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CheckPlateExists:"));
    DevGetSequenceRef(ML_STAR, PlateSequence, Sequence);
    CustomErrorHandling = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_2 ;
      err.Clear();
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    }
    Keys.SetSize(0);
    Values.SetSize(0);
    ABNWEBSERVERCOMMANDS::DriverRespond(State, RequestID, Message, Keys, Values);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "GetPlate")
    {
      GetPlate(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "PlacePlate")
    {
      PlacePlate(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }
} // library namespace
