#pragma once
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\AutomationBareNecessities\\ABN\\AutomationBareNecessitiesMethod\\Library\\ABNWebServerCommands\\JSONParser\\WebServerJSONParser.hs_"
#include "HSLDevLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\AutomationBareNecessities\\ABN\\AutomationBareNecessitiesMethod\\Library\\ABNWebServerCommands\\ABNWebServerCommands.hs_"
#include "HSLErrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace IPG {
  private function GetPlate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function PlacePlate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    WEBSERVERJSONPARSER::_InitLibrary();
    ABNWEBSERVERCOMMANDS::_InitLibrary();
  }
  function _ExitLibrary() {
    WEBSERVERJSONPARSER::_ExitLibrary();
    ABNWEBSERVERCOMMANDS::_ExitLibrary();
  }

  private function GetPlate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable PlateSequence;
    private variable GripHeight;
    private variable GripWidth;
    private variable GripForce;
    private variable Name;
    private variable OpenWidth;
    private sequence Sequence;
    private variable InverseGrip;
    private variable CollisionControl;
    private variable LiftupHeight;
    private variable RetractDistance;
    private variable LabwareOrientation;
    private variable GripMode;
    private variable Tolerance;
    private variable Movement;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    RequestID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    PlateSequence = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PlateSequence:"));
    GripHeight = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripHeight:"));
    GripMode = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripMode:"));
    GripWidth = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripWidth:"));
    OpenWidth = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:OpenWidth:"));
    Movement = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Movement:"));
    RetractDistance = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistance:"));
    LiftupHeight = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiftupHeight:"));
    LabwareOrientation = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareOrientation:"));
    GripForce = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripForce:"));
    Tolerance = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Tolerance:"));
    InverseGrip = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:InverseGrip:"));
    CollisionControl = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CollisionControl:"));
    DevGetSequenceRef(ML_STAR, PlateSequence, Sequence);
    CustomErrorHandling = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_1 ;
      err.Clear();
      ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
      errLabel_1 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    }
    Keys.SetSize(0);
    Values.SetSize(0);
    ABNWEBSERVERCOMMANDS::DriverRespond(State, RequestID, Message, Keys, Values);
  }

  private function PlacePlate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable PlateSequence;
    private variable CollisionControl;
    private variable LiftupHeight;
    private variable RetractDistance;
    private variable LabwareOrientation;
    private variable Name;
    private variable Movement;
    private sequence Sequence;
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    RequestID = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    Name = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    PlateSequence = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PlateSequence:"));
    Movement = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Movement:"));
    RetractDistance = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistance:"));
    LiftupHeight = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiftupHeight:"));
    LabwareOrientation = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareOrientation:"));
    CollisionControl = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CollisionControl:"));
    DevGetSequenceRef(ML_STAR, PlateSequence, Sequence);
    CustomErrorHandling = WEBSERVERJSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_2 ;
      err.Clear();
      ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    }
    Keys.SetSize(0);
    Values.SetSize(0);
    ABNWEBSERVERCOMMANDS::DriverRespond(State, RequestID, Message, Keys, Values);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "GetPlate")
    {
      GetPlate(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "PlacePlate")
    {
      PlacePlate(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }
} // library namespace
