#pragma once
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\JsonParser\\JsonParser.hs_"
#include "HSLDevLib.hsl"
#include "HSLErrLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace TRACKGRIPPER {
  private function GripPlate( device & ML_STAR, device & TrackGripper, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, device & TrackGripper, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function LockUnlockDoors( device & ML_STAR, device & TrackGripper, object & i_EndpointOutputDataJSONObject ) void ;
  private function MoveToPosition( device & ML_STAR, device & TrackGripper, object & i_EndpointOutputDataJSONObject ) void ;
  private function PlacePlate( device & ML_STAR, device & TrackGripper, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
  }

  private function GripPlate( device & ML_STAR, device & TrackGripper, object & i_EndpointOutputDataJSONObject ) void {
    private variable GripHeight;
    private variable GripWidth;
    private variable GripForce;
    private variable OpenWidth;
    private sequence Sequence;
    private variable InverseGrip;
    private variable CollisionControl;
    private variable LiftupHeight;
    private variable RetractDistance;
    private variable LabwareOrientation;
    private variable GripMode;
    private variable Tolerance;
    private variable Movement;
    private variable CustomErrorHandling;
    private object o_JSONObject;
    private variable PlateLabwareID;
    private variable RecoveryDetails;
    PlateLabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"));
    GripHeight = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripHeight:"));
    GripMode = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripMode:"));
    GripWidth = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripWidth:"));
    OpenWidth = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:OpenWidth:"));
    Movement = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Movement:"));
    RetractDistance = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistance:"));
    LiftupHeight = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiftupHeight:"));
    LabwareOrientation = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareOrientation:"));
    GripForce = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripForce:"));
    Tolerance = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Tolerance:"));
    InverseGrip = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:InverseGrip:"));
    CollisionControl = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CollisionControl:"));
    HSLLabwrAccess::GetTransportSequenceForLabwareID(ML_STAR, PlateLabwareID, Sequence);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_1 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        	RecoveryDetails = arrRetValues[2];
      }
      errLabel_1 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        RecoveryDetails = ErrGetDataAt(3);
      }   /* end if from skip handler if no error */
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
        	RecoveryDetails = arrRetValues[2];
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RecoveryDetails"), RecoveryDetails);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function PlacePlate( device & ML_STAR, device & TrackGripper, object & i_EndpointOutputDataJSONObject ) void {
    private variable CollisionControl;
    private variable LiftupHeight;
    private variable RetractDistance;
    private variable LabwareOrientation;
    private variable Movement;
    private sequence Sequence;
    private variable CustomErrorHandling;
    private object o_JSONObject;
    private variable PlateLabwareID;
    private variable RecoveryDetails;
    PlateLabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"));
    Movement = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Movement:"));
    RetractDistance = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistance:"));
    LiftupHeight = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiftupHeight:"));
    LabwareOrientation = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareOrientation:"));
    CollisionControl = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CollisionControl:"));
    HSLLabwrAccess::GetTransportSequenceForLabwareID(ML_STAR, PlateLabwareID, Sequence);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_2 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
        	RecoveryDetails = arrRetValues[2];
      }
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        RecoveryDetails = ErrGetDataAt(3);
      }   /* end if from skip handler if no error */
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
        	RecoveryDetails = arrRetValues[2];
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RecoveryDetails"), RecoveryDetails);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, device & TrackGripper, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "GetPlate")
    {
      GripPlate(ML_STAR, TrackGripper, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "PlacePlate")
    {
      PlacePlate(ML_STAR, TrackGripper, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "MoveToPosition")
    {
      MoveToPosition(ML_STAR, TrackGripper, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "LockUnlockDoors")
    {
      LockUnlockDoors(ML_STAR, TrackGripper, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }

  private function MoveToPosition( device & ML_STAR, device & TrackGripper, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable PlateLabwareID;
    private variable RecoveryDetails;
    private variable CustomErrorHandling;
    private variable CollisionControl;
    private variable LiftupHeight;
    private variable RetractDistance;
    private variable LabwareOrientation;
    private variable Movement;
    private sequence Sequence;
    PlateLabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"));
    Movement = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Movement:"));
    RetractDistance = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistance:"));
    LiftupHeight = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiftupHeight:"));
    LabwareOrientation = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareOrientation:"));
    CollisionControl = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CollisionControl:"));
    HSLLabwrAccess::GetTransportSequenceForLabwareID(ML_STAR, PlateLabwareID, Sequence);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_3 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
        	RecoveryDetails = arrRetValues[2];
      }
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        RecoveryDetails = ErrGetDataAt(3);
      }   /* end if from skip handler if no error */
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
        	RecoveryDetails = arrRetValues[2];
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RecoveryDetails"), RecoveryDetails);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function LockUnlockDoors( device & ML_STAR, device & TrackGripper, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable PlateLabwareID;
    private variable RecoveryDetails;
    private variable CustomErrorHandling;
    private variable CollisionControl;
    private variable LiftupHeight;
    private variable RetractDistance;
    private variable LabwareOrientation;
    private variable Movement;
    private sequence Sequence;
    PlateLabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"));
    Movement = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Movement:"));
    RetractDistance = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistance:"));
    LiftupHeight = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiftupHeight:"));
    LabwareOrientation = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareOrientation:"));
    CollisionControl = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CollisionControl:"));
    HSLLabwrAccess::GetTransportSequenceForLabwareID(ML_STAR, PlateLabwareID, Sequence);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_4 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
        	RecoveryDetails = arrRetValues[2];
      }
      errLabel_4 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        RecoveryDetails = ErrGetDataAt(3);
      }   /* end if from skip handler if no error */
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
        	RecoveryDetails = arrRetValues[2];
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RecoveryDetails"), RecoveryDetails);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }
} // library namespace
