 namespace _Method { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _ActionServer { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _StateServer { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _Method { #include "HSLJson\\HSLJson.hsl" }
 namespace _ActionServer { #include "HSLJson\\HSLJson.hsl" }
 namespace _StateServer { #include "HSLJson\\HSLJson.hsl" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\Logger\\Logger.hs_" }
 namespace _ActionServer { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\Logger\\Logger.hs_" }
 namespace _StateServer { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\Logger\\Logger.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_" }
 namespace _ActionServer { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_" }
 namespace _StateServer { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_" }
 namespace _ActionServerProcessa { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _ActionServerProcessa { #include "HSLJson\\HSLJson.hsl" }
 namespace _ActionServerProcessa { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\Logger\\Logger.hs_" }
 namespace _ActionServerProcessa { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_" }
 namespace _ActionServerProc { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _ActionServerProc { #include "HSLJson\\HSLJson.hsl" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\Logger\\Logger.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_" }
 namespace _ActionServerProc { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _ActionServerProc { #include "HSLJson\\HSLJson.hsl" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\Logger\\Logger.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_" }
 namespace _StateServerProc { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _StateServerProc { #include "HSLJson\\HSLJson.hsl" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\Logger\\Logger.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\StateServerEndpoints\\StateServerEndpoints.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\StateServerEndpoints\\StateServerEndpoints.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\StateServerEndpoints\\StateServerEndpoints.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\_Visual_NTR_Library\\_Visual_NTR_Library.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\_Visual_NTR_Library\\_Visual_NTR_Library.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\_Visual_NTR_Library\\_Visual_NTR_Library.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\SetCuttedTipType\\CuttedTipType.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\SetCuttedTipType\\CuttedTipType.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\SetCuttedTipType\\CuttedTipType.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HamiltonHeaterCooler\\HamiltonHeaterCooler.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HamiltonHeaterCooler\\HamiltonHeaterCooler.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HamiltonHeaterCooler\\HamiltonHeaterCooler.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HSLHamHeaterShakerLib\\_HSLHamHeaterShakerLib.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HSLHamHeaterShakerLib\\_HSLHamHeaterShakerLib.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HSLHamHeaterShakerLib\\_HSLHamHeaterShakerLib.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HSLLabwrAccess\\HSLLabwrAccess.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HSLLabwrAccess\\HSLLabwrAccess.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HSLLabwrAccess\\HSLLabwrAccess.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HSL_LiquidClassLib\\HSL_LiquidClassLib.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HSL_LiquidClassLib\\HSL_LiquidClassLib.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HSL_LiquidClassLib\\HSL_LiquidClassLib.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\JsonParser\\JsonParser.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\JsonParser\\JsonParser.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\JsonParser\\JsonParser.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HSLVacuuBrandPump\\HSLVacuuBrandPump.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HSLVacuuBrandPump\\HSLVacuuBrandPump.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HSLVacuuBrandPump\\HSLVacuuBrandPump.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Library\\ClosedContainer\\FlipTube\\Fliptube.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Library\\ClosedContainer\\FlipTube\\Fliptube.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Library\\ClosedContainer\\FlipTube\\Fliptube.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Library\\DeckLoadingDialog\\DeckLoadingDialog.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Library\\DeckLoadingDialog\\DeckLoadingDialog.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Library\\DeckLoadingDialog\\DeckLoadingDialog.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _ActionServerProc { #include "HSLTrcLib.hsl" }
 namespace _StateServerProc { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\Channel1000uL.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\Channel1000uL.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\Channel1000uL.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\Channel1000uLCOREGrip.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\Channel1000uLCOREGrip.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\Channel1000uLCOREGrip.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\CORE96Head.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\CORE96Head.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\CORE96Head.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\iSwap.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\iSwap.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\iSwap.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\Autoload.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\Autoload.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\Autoload.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\ML_STAR.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\ML_STAR.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\ML_STAR\\ML_STAR.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HSLTipCountingLib\\_HSLTipCountingLib.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HSLTipCountingLib\\_HSLTipCountingLib.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\HSLTipCountingLib\\_HSLTipCountingLib.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\General\\Timer.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\General\\Timer.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\General\\Timer.hs_" }
#include "Example Layout.res"
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\VantageTrackGripperEntryExit\\Library\\EntryExit\\EntryExit.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\VantageTrackGripperEntryExit\\Library\\EntryExit\\EntryExit.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\VantageTrackGripperEntryExit\\Library\\EntryExit\\EntryExit.hs_" }
 namespace _Method { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\VantageTrackGripperEntryExit\\Library\\TrackGripper\\TrackGripper.hs_" }
 namespace _ActionServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\VantageTrackGripperEntryExit\\Library\\TrackGripper\\TrackGripper.hs_" }
 namespace _StateServerProc { #include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\VantageTrackGripperEntryExit\\Library\\TrackGripper\\TrackGripper.hs_" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _ActionServerProc { #include "HSLML_STARLib.hsl" }
 namespace _StateServerProc { #include "HSLML_STARLib.hsl" }
variable StateServerProc;
variable ActionServerProc;
global device ML_STAR ("Example Layout.lay", "ML_STAR", hslTrue);
global device EntryExit ("Example Layout.lay", "EntryExit", hslTrue);
global device TrackGripper ("Example Layout.lay", "TrackGripper", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _ActionServerProc { #include "HSLMETEDLib.hs_" }
 namespace _StateServerProc { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _ActionServerProc { #include "HSLMECCLib.hs_" }
 namespace _StateServerProc { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _ActionServerProc { #include "HSLPTLLib.hsl" }
 namespace _StateServerProc { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "templates\\HSLPipetteWizard.hsl" }
 namespace _ActionServerProc { #include "templates\\HSLPipetteWizard.hsl" }
 namespace _StateServerProc { #include "templates\\HSLPipetteWizard.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }
 namespace _ActionServerProc {  #include __filename__ ".sub"  }
 namespace _StateServerProc {  #include __filename__ ".sub"  }
namespace _ActionServerProc{ function tfn_ActionServerProc () {
    ActionServer();
  } }
namespace _StateServerProc{ function tfn_StateServerProc () {
    StateServer();
  } }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOGGER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
    STATESERVERENDPOINTS::_InitLibrary();
    _VISUAL_NTR_LIBRARY::_InitLibrary();
    CUTTEDTIPTYPE::_InitLibrary();
    HAMILTONHEATERCOOLER::_InitLibrary();
    _HSLHAMHEATERSHAKERLIB::_InitLibrary();
    HSLLABWRACCESS::_InitLibrary();
    HSL_LIQUIDCLASSLIB::_InitLibrary();
    JSONPARSER::_InitLibrary();
    HSLVACUUBRANDPUMP::_InitLibrary();
    FLIPTUBE::_InitLibrary();
    DECKLOADINGDIALOG::_InitLibrary();
    CHANNEL1000UL::_InitLibrary();
    CHANNEL1000ULCOREGRIP::_InitLibrary();
    CORE96HEAD::_InitLibrary();
    ISWAP::_InitLibrary();
    AUTOLOAD::_InitLibrary();
    ML_STAR::_InitLibrary();
    _HSLTIPCOUNTINGLIB::_InitLibrary();
    TIMER::_InitLibrary();
    ENTRYEXIT::_InitLibrary();
    TRACKGRIPPER::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    {
      	EntryExit._99C02468_3A8F_41DC_86EE_32F35ECF339A("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"); // Initialize
    }
    {
      	TrackGripper._5486C916_CCE0_472B_AB7C_45B597C4F704("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"); // Initialize
    }
    LOGGER::EnableOutput(Translate("True"));
    HSLHttp::SetTraceLevel(0);
    HSLJsonLib::SetTraceLevel(0);
    ActionServerProc = Fork("_ActionServerProc::tfn_ActionServerProc");
    if( ActionServerProc == 0 )
    {
          MECC::RaiseRuntimeErrorEx(-1590820608, MECC::IDS::stepNameThreadBegin, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    StateServerProc = Fork("_StateServerProc::tfn_StateServerProc");
    if( StateServerProc == 0 )
    {
          MECC::RaiseRuntimeErrorEx(-1590820608, MECC::IDS::stepNameThreadBegin, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    LOGGER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    STATESERVERENDPOINTS::_ExitLibrary();
    _VISUAL_NTR_LIBRARY::_ExitLibrary();
    CUTTEDTIPTYPE::_ExitLibrary();
    HAMILTONHEATERCOOLER::_ExitLibrary();
    _HSLHAMHEATERSHAKERLIB::_ExitLibrary();
    HSLLABWRACCESS::_ExitLibrary();
    HSL_LIQUIDCLASSLIB::_ExitLibrary();
    JSONPARSER::_ExitLibrary();
    HSLVACUUBRANDPUMP::_ExitLibrary();
    FLIPTUBE::_ExitLibrary();
    DECKLOADINGDIALOG::_ExitLibrary();
    CHANNEL1000UL::_ExitLibrary();
    CHANNEL1000ULCOREGRIP::_ExitLibrary();
    CORE96HEAD::_ExitLibrary();
    ISWAP::_ExitLibrary();
    AUTOLOAD::_ExitLibrary();
    ML_STAR::_ExitLibrary();
    _HSLTIPCOUNTINGLIB::_ExitLibrary();
    TIMER::_ExitLibrary();
    ENTRYEXIT::_ExitLibrary();
    TRACKGRIPPER::_ExitLibrary();
  } }
