private function ActionServer(  ) void ;
function ServeRequest( object & i_JSONObject ) void ;
private function StateServer(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function ActionServer(  ) void {
  private object JSONObject;
  private variable IsReady;
  private variable None;
  private variable Return;
  {
    None = 0;
    while ("Infinite" == "Infinite")
    {
      None = None + 1;
      IsReady = ACTIONSERVERENDPOINTS::GetNextCommand(600, JSONObject);
      if (IsReady != 0)
      {
        LOGGER::TraceComment(Translate("Action Server Command Processing"));
        ServeRequest(JSONObject);
      }
      else
      {
        Return = ACTIONSERVERENDPOINTS::ServerIsAlive();
        if (Return == 0)
        {
          MECC::TraceComment(Translate("ActionServer does not appear to be running... Aborting."));
          abort;
        }
      }
    }
  }
}

private function StateServer(  ) void {
  private object JSONObject;
  private variable IsReady;
  private variable None;
  private variable Return;
  {
    None = 0;
    while ("Infinite" == "Infinite")
    {
      None = None + 1;
      IsReady = STATESERVERENDPOINTS::GetNextCommand(600, JSONObject);
      if (IsReady != 0)
      {
        LOGGER::TraceComment(Translate("State Server Command Processing"));
        ServeRequest(JSONObject);
      }
      else
      {
        Return = STATESERVERENDPOINTS::ServerIsAlive();
        if (Return == 0)
        {
          MECC::TraceComment(Translate("StateServer does not appear to be running... Aborting."));
          abort;
        }
      }
    }
  }
}

function ServeRequest( object & i_JSONObject ) void {
  private object EndpointOutputDataJSONObject;
  private variable CommandName;
  private variable ModuleName;
  private variable JSONObjectString;
  MECC::TraceComment(Translate("\n\n###################### START COMMAND ###################### "));
  JSONPARSER::GetEndpointOutputData(i_JSONObject, EndpointOutputDataJSONObject);
  HSLJsonLib::GetJson(EndpointOutputDataJSONObject, JSONObjectString);
  TrcTrace(Translate(""), JSONObjectString);
  ModuleName = JSONPARSER::GetJSONElement(EndpointOutputDataJSONObject, Translate("Module Name:"));
  CommandName = JSONPARSER::GetJSONElement(EndpointOutputDataJSONObject, Translate("Command Name:"));
  if (ModuleName == "Hamilton Backend")
  {
    ACTIONSERVERENDPOINTS::RespondToCommand(EndpointOutputDataJSONObject);
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@\n\n       .__(.)< (MEOW)\n        \\___)\n\nAbort command received. Goodbye!\n\n              .__(.)< (MEOW)\n               \\___)\n\n@@@@@@@@@@@@@@@@"));
    abort;
    return;
  }
  if (ModuleName == "Hamilton EntryExit")
  {
    ENTRYEXIT::HandleCommand(ML_STAR, EntryExit, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton General Timer")
  {
    TIMER::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton HamiltonHeaterCooler")
  {
    HAMILTONHEATERCOOLER::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton HSLLiquidClassLib")
  {
    HSL_LIQUIDCLASSLIB::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton HSLHamHeaterShakerLib")
  {
    _HSLHAMHEATERSHAKERLIB::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton HSLLabwrAccess")
  {
    HSLLABWRACCESS::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton HSLTipCountingLib")
  {
    _HSLTIPCOUNTINGLIB::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton HSLVacuuBrandPump")
  {
    HSLVACUUBRANDPUMP::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton ML_STAR Channel1000uL")
  {
    CHANNEL1000UL::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton ML_STAR CORE96Head")
  {
    CORE96HEAD::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton ML_STAR Channel1000uLCOREGrip")
  {
    CHANNEL1000ULCOREGRIP::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton ML_STAR iSwap")
  {
    ISWAP::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton ML_STAR Autoload")
  {
    AUTOLOAD::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton ML_STAR ML_STAR")
  {
    ML_STAR::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton SetCuttedTipType")
  {
    CUTTEDTIPTYPE::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton TrackGripper")
  {
    TRACKGRIPPER::HandleCommand(ML_STAR, TrackGripper, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton Visual_NTR_Library")
  {
    _VISUAL_NTR_LIBRARY::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton ClosedContainer FlipTube")
  {
    FLIPTUBE::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  if (ModuleName == "Hamilton DeckLoadingDialog")
  {
    DECKLOADINGDIALOG::HandleCommand(ML_STAR, CommandName, EndpointOutputDataJSONObject);
    return;
  }
  MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nModule not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
  abort;
}
