#pragma once
#include "HSLStrLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMthLib.hsl"
#include "HSLDevLib.hsl"
#include "HSLSeqLib.hsl"
#include "HSLUtilLib2.hsl"
#include "HSLUtilLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace SETCUTTEDTIPTYPE_UNIVERSAL_V2 {
  function ResetAllTipTypes( device & ML_STAR ) void ;
  function ResetTipType( device & ML_STAR, variable iTipType ) void ;
  function SetCuttedTipTypeByDiameter( device & ML_STAR, variable iTipType, variable iCuttedDiameter ) void ;
  function SetCuttedTipTypeByLength( device & ML_STAR, variable iTipType, variable iCuttingLength ) void ;
  function SetCuttedTipTypeByPartnumber( device & ML_STAR, variable iPartnummer ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
  }
  function _ExitLibrary() {
  }

  function SetCuttedTipTypeByDiameter( device & ML_STAR, variable iTipType, variable iCuttedDiameter ) void {
    private variable tt;
    private variable TipTypeToOverwrite;
    private variable VolumeOfCuttedEnd;
    private variable tv_new;
    private variable tu;
    private variable BaseAreaOnCuttingHeight;
    private variable VolumeOfCuttedEndInTenthMicroliters;
    private variable tv;
    private variable diameterOnCuttingHeight;
    private variable tf;
    private variable tg;
    private variable TipTypParameter;
    private variable TipConst_DeltaPerMillimeter;
    private variable tl_new;
    private variable safetyVolumeToRemove;
    private variable TipConst_StartValue;
    private variable lengthToCutInTenthMillimeters;
    private variable tl;
    private variable safetyVolumeToRemoveInTenthMicroliters;
    private variable CutOffset;
    private variable tipConstantYShift;
    private variable iTipTypeString;
    private variable iTipTypeLength;
    private variable Original_Parameter;
    private variable arr_HighVolumeLength[];
    private variable arr_DiameterValues[];
    private variable arr_StandardVolumeLength[];
    private dialog dialogHandle_1;
    private dialog dialogHandle_2;
    private dialog dialogHandle_3;
    private dialog dialogHandle_4;
    private variable iCuttingLength;
    private variable ArrayIndexOfFoundValue;
    private variable foundValue;
    private variable arr_50ulVolumeLength[];
    private dialog dialogHandle_5;
    private dialog dialogHandle_6;
    private dialog dialogHandle_7;
    private dialog dialogHandle_8;
    private dialog dialogHandle_9;
    private dialog dialogHandle_10;
    private dialog dialogHandle_11;
    private dialog dialogHandle_12;
    private dialog dialogHandle_13;
    private dialog dialogHandle_14;
    TrcTrace(Translate("Start of SetCuttedTipTypeByDiameter"), Translate(""));
    if (iTipType == 0)
    {
      Original_Parameter = Translate("tt00tf0tl0520tv04000tg2tu0");
    }
    if (iTipType == 1)
    {
      Original_Parameter = Translate("tt01tf1tl0520tv03600tg2tu0");
    }
    if (iTipType == 4)
    {
      Original_Parameter = Translate("tt04tf0tl0871tv12500tg3tu0");
    }
    if (iTipType == 5)
    {
      Original_Parameter = Translate("tt05tf1tl0871tv10650tg3tu0");
    }
    if (iTipType == 22)
    {
      Original_Parameter = Translate("tt22tf0tl0425tv00650tg2tu0");
    }
    if (iTipType == 23)
    {
      Original_Parameter = Translate("tt23tf1tl0425tv00600tg2tu0");
    }
    CutOffset = -25.2;
    safetyVolumeToRemove = 20;
    safetyVolumeToRemoveInTenthMicroliters = safetyVolumeToRemove * 10;
    iTipTypeString = StrIStr(iTipType);
    iTipTypeLength = StrGetLength(iTipTypeString);
    if (iTipTypeLength < 2)
    {
      iTipTypeString = StrConcat2(Translate("0"), iTipType);
    }
    TipTypeToOverwrite = iTipTypeString;
    arr_DiameterValues.SetSize(0);
    arr_HighVolumeLength.SetSize(0);
    arr_StandardVolumeLength.SetSize(0);
    arr_50ulVolumeLength.SetSize(0);
    arr_DiameterValues.AddAsLast(0.4);
    arr_DiameterValues.AddAsLast(0.5);
    arr_DiameterValues.AddAsLast(0.6);
    arr_DiameterValues.AddAsLast(0.7);
    arr_DiameterValues.AddAsLast(0.8);
    arr_DiameterValues.AddAsLast(0.9);
    arr_DiameterValues.AddAsLast(1.0);
    arr_DiameterValues.AddAsLast(1.1);
    arr_DiameterValues.AddAsLast(1.2);
    arr_DiameterValues.AddAsLast(1.3);
    arr_DiameterValues.AddAsLast(1.4);
    arr_DiameterValues.AddAsLast(1.5);
    arr_DiameterValues.AddAsLast(1.6);
    arr_DiameterValues.AddAsLast(1.7);
    arr_DiameterValues.AddAsLast(1.8);
    arr_DiameterValues.AddAsLast(1.9);
    arr_DiameterValues.AddAsLast(2.0);
    arr_DiameterValues.AddAsLast(2.1);
    arr_DiameterValues.AddAsLast(2.2);
    arr_DiameterValues.AddAsLast(2.3);
    arr_DiameterValues.AddAsLast(2.4);
    arr_DiameterValues.AddAsLast(2.5);
    arr_DiameterValues.AddAsLast(2.6);
    arr_DiameterValues.AddAsLast(2.7);
    arr_DiameterValues.AddAsLast(2.8);
    arr_DiameterValues.AddAsLast(2.9);
    arr_DiameterValues.AddAsLast(3.0);
    arr_DiameterValues.AddAsLast(3.1);
    arr_DiameterValues.AddAsLast(3.2);
    arr_DiameterValues.AddAsLast(3.3);
    arr_HighVolumeLength.AddAsLast(9999);
    arr_HighVolumeLength.AddAsLast(9999);
    arr_HighVolumeLength.AddAsLast(9999);
    arr_HighVolumeLength.AddAsLast(0.4);
    arr_HighVolumeLength.AddAsLast(0.985);
    arr_HighVolumeLength.AddAsLast(1.57);
    arr_HighVolumeLength.AddAsLast(2.155);
    arr_HighVolumeLength.AddAsLast(2.74);
    arr_HighVolumeLength.AddAsLast(3.325);
    arr_HighVolumeLength.AddAsLast(3.91);
    arr_HighVolumeLength.AddAsLast(4.496);
    arr_HighVolumeLength.AddAsLast(5.081);
    arr_HighVolumeLength.AddAsLast(5.666);
    arr_HighVolumeLength.AddAsLast(6.251);
    arr_HighVolumeLength.AddAsLast(6.836);
    arr_HighVolumeLength.AddAsLast(7.421);
    arr_HighVolumeLength.AddAsLast(8.006);
    arr_HighVolumeLength.AddAsLast(8.591);
    arr_HighVolumeLength.AddAsLast(9.176);
    arr_HighVolumeLength.AddAsLast(9.716);
    arr_HighVolumeLength.AddAsLast(10.346);
    arr_HighVolumeLength.AddAsLast(10.931);
    arr_HighVolumeLength.AddAsLast(11.516);
    arr_HighVolumeLength.AddAsLast(12.101);
    arr_HighVolumeLength.AddAsLast(12.687);
    arr_HighVolumeLength.AddAsLast(13.272);
    arr_HighVolumeLength.AddAsLast(13.857);
    arr_HighVolumeLength.AddAsLast(14.442);
    arr_HighVolumeLength.AddAsLast(15.027);
    arr_HighVolumeLength.AddAsLast(15.612);
    arr_StandardVolumeLength.AddAsLast(0.3);
    arr_StandardVolumeLength.AddAsLast(1.004);
    arr_StandardVolumeLength.AddAsLast(1.707);
    arr_StandardVolumeLength.AddAsLast(2.411);
    arr_StandardVolumeLength.AddAsLast(3.114);
    arr_StandardVolumeLength.AddAsLast(3.818);
    arr_StandardVolumeLength.AddAsLast(4.521);
    arr_StandardVolumeLength.AddAsLast(5.225);
    arr_StandardVolumeLength.AddAsLast(5.929);
    arr_StandardVolumeLength.AddAsLast(6.632);
    arr_StandardVolumeLength.AddAsLast(7.336);
    arr_StandardVolumeLength.AddAsLast(8.039);
    arr_StandardVolumeLength.AddAsLast(8.743);
    arr_StandardVolumeLength.AddAsLast(9.446);
    arr_StandardVolumeLength.AddAsLast(10.15);
    arr_StandardVolumeLength.AddAsLast(10.854);
    arr_StandardVolumeLength.AddAsLast(11.557);
    arr_StandardVolumeLength.AddAsLast(12.261);
    arr_StandardVolumeLength.AddAsLast(12.964);
    arr_StandardVolumeLength.AddAsLast(13.668);
    arr_StandardVolumeLength.AddAsLast(14.371);
    arr_StandardVolumeLength.AddAsLast(15.075);
    arr_StandardVolumeLength.AddAsLast(15.779);
    arr_StandardVolumeLength.AddAsLast(16.482);
    arr_StandardVolumeLength.AddAsLast(17.186);
    arr_StandardVolumeLength.AddAsLast(9999);
    arr_StandardVolumeLength.AddAsLast(9999);
    arr_StandardVolumeLength.AddAsLast(9999);
    arr_StandardVolumeLength.AddAsLast(9999);
    arr_StandardVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(0);
    arr_50ulVolumeLength.AddAsLast(2.0);
    arr_50ulVolumeLength.AddAsLast(4.0);
    arr_50ulVolumeLength.AddAsLast(6.0);
    arr_50ulVolumeLength.AddAsLast(8.0);
    arr_50ulVolumeLength.AddAsLast(10.0);
    arr_50ulVolumeLength.AddAsLast(12.0);
    arr_50ulVolumeLength.AddAsLast(13.567);
    arr_50ulVolumeLength.AddAsLast(15.135);
    arr_50ulVolumeLength.AddAsLast(16.702);
    arr_50ulVolumeLength.AddAsLast(18.27);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    arr_50ulVolumeLength.AddAsLast(9999);
    iCuttedDiameter = MthRound(iCuttedDiameter, 1);
    TrcTrace(Translate("---------- iCuttedDiameter = "), iCuttedDiameter);
    if (iCuttedDiameter > 3.3)
    {
      dialogHandle_2.SetOutput(Translate("The specified diameter too big!\n\n"), Translate("Please change the cutted diameter variable and restart the method"));
      dialogHandle_2.ShowOutput(Translate("Cutted diameter too big"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      abort;
    }
    if (iCuttedDiameter < 0.4)
    {
      dialogHandle_1.SetOutput(Translate("The specified diameter too small!\n\n"), Translate("Please change the cutted diameter variable and restart method"));
      dialogHandle_1.ShowOutput(Translate("Cutted diameter too small"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      abort;
    }
    if (iTipType == 0)
    {
      tipConstantYShift = 0.078;
      MECC::TraceComment(Translate("---------- TipType Standard Tip, no filter"));
      tt = TipTypeToOverwrite;
      tf = 0;
      tl = 520;
      foundValue = Util::Lookup(arr_DiameterValues, iCuttedDiameter, ArrayIndexOfFoundValue);
      ArrayIndexOfFoundValue = ArrayIndexOfFoundValue + 1;
      if (foundValue == 1)
      {
        iCuttingLength=arr_StandardVolumeLength.GetAt(ArrayIndexOfFoundValue-1);
        if (iCuttingLength == 9999)
        {
          dialogHandle_4.SetOutput(Translate("The requested diameter is not available for this tip\n\n"), Translate("Please change the cutted diameter variable and restart the method"));
          dialogHandle_4.ShowOutput(Translate("No value available"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          abort;
        }
      }
      else
      {
        dialogHandle_3.SetOutput(Translate("There is no value assigned to the specified tip diameter\n\n"), Translate("Please change the cutted diameter variable and restart the method"));
        dialogHandle_3.ShowOutput(Translate("No value assigned for this diameter"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        abort;
      }
      lengthToCutInTenthMillimeters = iCuttingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      tl_new = MthRound(tl_new, 0);
      tl_new = StrFStr(tl_new);
      tl_new = StrSpanExcluding(tl_new, Translate("."));
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 4000;
      tg = 2;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.142;
      TipConst_StartValue = 0.358;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * iCuttingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * iCuttingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = StrIStr(tv_new);
      tv_new = StrFillLeft(tv_new, Translate("0"), 5);
    }
    if (iTipType == 1)
    {
      tipConstantYShift = 0.078;
      MECC::TraceComment(Translate("---------- TipType Standard Tip with filter"));
      tt = TipTypeToOverwrite;
      tf = 1;
      tl = 520;
      foundValue = Util::Lookup(arr_DiameterValues, iCuttedDiameter, ArrayIndexOfFoundValue);
      ArrayIndexOfFoundValue = ArrayIndexOfFoundValue + 1;
      if (foundValue == 1)
      {
        iCuttingLength=arr_StandardVolumeLength.GetAt(ArrayIndexOfFoundValue-1);
        if (iCuttingLength == 9999)
        {
          dialogHandle_9.SetOutput(Translate("The requested diameter is not available for this tip\n\n"), Translate("Please change the cutted diameter variable and restart the method"));
          dialogHandle_9.ShowOutput(Translate("No value available"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          abort;
        }
      }
      else
      {
        dialogHandle_7.SetOutput(Translate("There is no value assigned to the specified tip diameter\n\n"), Translate("Please change the cutted diameter variable and restart the method"));
        dialogHandle_7.ShowOutput(Translate("No value assigned for this diameter"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        abort;
      }
      lengthToCutInTenthMillimeters = iCuttingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      tl_new = MthRound(tl_new, 0);
      tl_new = StrFStr(tl_new);
      tl_new = StrSpanExcluding(tl_new, Translate("."));
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 3600;
      tg = 2;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.142;
      TipConst_StartValue = 0.358;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * iCuttingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * iCuttingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = StrIStr(tv_new);
      tv_new = StrFillLeft(tv_new, Translate("0"), 5);
    }
    if (iTipType == 4)
    {
      tipConstantYShift = 0.107;
      MECC::TraceComment(Translate("---------- TipType High Volume Tip, no filter"));
      tt = TipTypeToOverwrite;
      tf = 0;
      tl = 871;
      foundValue = Util::Lookup(arr_DiameterValues, iCuttedDiameter, ArrayIndexOfFoundValue);
      ArrayIndexOfFoundValue = ArrayIndexOfFoundValue + 1;
      if (foundValue == 1)
      {
        iCuttingLength=arr_HighVolumeLength.GetAt(ArrayIndexOfFoundValue-1);
        if (iCuttingLength == 9999)
        {
          dialogHandle_11.SetOutput(Translate("The requested diameter is not available for this tip\n\n"), Translate("Please change the cutted diameter variable and restart the method"));
          dialogHandle_11.ShowOutput(Translate("No value available"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          abort;
        }
      }
      else
      {
        dialogHandle_14.SetOutput(Translate("There is no value assigned to the specified tip diameter\n\n"), Translate("Please change the cutted diameter variable and restart the method"));
        dialogHandle_14.ShowOutput(Translate("No value assigned for this diameter"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        abort;
      }
      lengthToCutInTenthMillimeters = iCuttingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      tl_new = MthRound(tl_new, 0);
      tl_new = StrFStr(tl_new);
      tl_new = StrSpanExcluding(tl_new, Translate("."));
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 12500;
      tg = 3;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.171;
      TipConst_StartValue = 0.632;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * iCuttingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * iCuttingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = StrIStr(tv_new);
      tv_new = StrFillLeft(tv_new, Translate("0"), 5);
    }
    if (iTipType == 5)
    {
      tipConstantYShift = 0.107;
      MECC::TraceComment(Translate("---------- TipType High Volume Tip with filter"));
      tt = TipTypeToOverwrite;
      tf = 1;
      tl = 871;
      foundValue = Util::Lookup(arr_DiameterValues, iCuttedDiameter, ArrayIndexOfFoundValue);
      ArrayIndexOfFoundValue = ArrayIndexOfFoundValue + 1;
      if (foundValue == 1)
      {
        iCuttingLength=arr_HighVolumeLength.GetAt(ArrayIndexOfFoundValue-1);
        if (iCuttingLength == 9999)
        {
          dialogHandle_13.SetOutput(Translate("The requested diameter is not available for this tip\n\n"), Translate("Please change the cutted diameter variable and restart the method"));
          dialogHandle_13.ShowOutput(Translate("No value available"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          abort;
        }
      }
      else
      {
        dialogHandle_6.SetOutput(Translate("There is no value assigned to the specified tip diameter\n\n"), Translate("Please change the cutted diameter variable and restart the method"));
        dialogHandle_6.ShowOutput(Translate("No value assigned for this diameter"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        abort;
      }
      lengthToCutInTenthMillimeters = iCuttingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      tl_new = MthRound(tl_new, 0);
      tl_new = StrFStr(tl_new);
      tl_new = StrSpanExcluding(tl_new, Translate("."));
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 10650;
      tg = 3;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.171;
      TipConst_StartValue = 0.632;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * iCuttingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * iCuttingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = StrIStr(tv_new);
      tv_new = StrFillLeft(tv_new, Translate("0"), 5);
    }
    if (iTipType == 22)
    {
      tipConstantYShift = 0.092;
      MECC::TraceComment(Translate("---------- TipType 50ul Tip, no filter"));
      tt = TipTypeToOverwrite;
      tf = 0;
      tl = 420;
      foundValue = Util::Lookup(arr_DiameterValues, iCuttedDiameter, ArrayIndexOfFoundValue);
      ArrayIndexOfFoundValue = ArrayIndexOfFoundValue + 1;
      if (foundValue == 1)
      {
        iCuttingLength=arr_50ulVolumeLength.GetAt(ArrayIndexOfFoundValue-1);
        if (iCuttingLength == 9999)
        {
          dialogHandle_10.SetOutput(Translate("The requested diameter is not available for this tip\n\n"), Translate("Please change the cutted diameter variable and restart the method"));
          dialogHandle_10.ShowOutput(Translate("No value available"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          abort;
        }
      }
      else
      {
        dialogHandle_5.SetOutput(Translate("There is no value assigned to the specified tip diameter\n\n"), Translate("Please change the cutted diameter variable and restart the method"));
        dialogHandle_5.ShowOutput(Translate("No value assigned for this diameter"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        abort;
      }
      lengthToCutInTenthMillimeters = iCuttingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      tl_new = MthRound(tl_new, 0);
      tl_new = StrFStr(tl_new);
      tl_new = StrSpanExcluding(tl_new, Translate("."));
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 650;
      tg = 2;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.122;
      TipConst_StartValue = 0.262;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * iCuttingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * iCuttingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = StrIStr(tv_new);
      tv_new = StrFillLeft(tv_new, Translate("0"), 5);
    }
    if (iTipType == 23)
    {
      tipConstantYShift = 0.092;
      MECC::TraceComment(Translate("--------- TipType 50ul Tip with filter"));
      tt = TipTypeToOverwrite;
      tf = 1;
      tl = 420;
      foundValue = Util::Lookup(arr_DiameterValues, iCuttedDiameter, ArrayIndexOfFoundValue);
      ArrayIndexOfFoundValue = ArrayIndexOfFoundValue + 1;
      if (foundValue == 1)
      {
        iCuttingLength=arr_50ulVolumeLength.GetAt(ArrayIndexOfFoundValue-1);
        if (iCuttingLength == 9999)
        {
          dialogHandle_12.SetOutput(Translate("The requested diameter is not available for this tip\n\n"), Translate("Please change the cutted diameter variable and restart the method"));
          dialogHandle_12.ShowOutput(Translate("No value available"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
          abort;
        }
      }
      else
      {
        dialogHandle_8.SetOutput(Translate("There is no value assigned to the specified tip diameter\n\n"), Translate("Please change the cutted diameter variable and restart the method"));
        dialogHandle_8.ShowOutput(Translate("No value assigned for this diameter"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
        abort;
      }
      lengthToCutInTenthMillimeters = iCuttingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      tl_new = MthRound(tl_new, 0);
      tl_new = StrFStr(tl_new);
      tl_new = StrSpanExcluding(tl_new, Translate("."));
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 600;
      tg = 2;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.122;
      TipConst_StartValue = 0.262;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * iCuttingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * iCuttingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = StrIStr(tv_new);
      tv_new = StrFillLeft(tv_new, Translate("0"), 5);
    }
    TipTypParameter = StrConcat8(Translate("tt"), TipTypeToOverwrite, Translate("tf"), tf, Translate("tl"), tl_new, Translate("tv"), tv_new);
    TipTypParameter = StrConcat8(TipTypParameter, Translate("tg"), tg, Translate("tu"), tu, Translate(""), Translate(""), Translate(""));
    TrcTrace(Translate("Orig.TipTypParameter = "), Original_Parameter);
    TrcTrace(Translate("New TipTypParameter = "), TipTypParameter);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    TrcTrace(Translate("End of SetCuttedTipTypeByDiameter"), Translate(""));
  }

  function SetCuttedTipTypeByLength( device & ML_STAR, variable iTipType, variable iCuttingLength ) void {
    private dialog dialogHandle_15;
    private variable tt;
    private variable VolumeOfCuttedEnd;
    private variable tv_new;
    private variable TipTypeToOverwrite;
    private variable tu;
    private variable BaseAreaOnCuttingHeight;
    private variable VolumeOfCuttedEndInTenthMicroliters;
    private variable tv;
    private variable diameterOnCuttingHeight;
    private variable Original_Parameter;
    private variable tf;
    private variable tg;
    private variable tipConstantYShift;
    private variable TipTypParameter;
    private variable TipConst_DeltaPerMillimeter;
    private variable iTipTypeString;
    private variable tl_new;
    private variable safetyVolumeToRemove;
    private variable TipConst_StartValue;
    private variable lengthToCutInTenthMillimeters;
    private variable tl;
    private variable safetyVolumeToRemoveInTenthMicroliters;
    private variable iTipTypeLength;
    private variable CutOffset;
    private variable type;
    TrcTrace(Translate("Start of SetCuttedTipTypeByLength"), Translate(""));
    if (iTipType == 0)
    {
      Original_Parameter = Translate("tt00tf0tl0520tv04000tg2tu0");
    }
    if (iTipType == 1)
    {
      Original_Parameter = Translate("tt01tf1tl0520tv03600tg2tu0");
    }
    if (iTipType == 4)
    {
      Original_Parameter = Translate("tt04tf0tl0871tv12500tg3tu0");
    }
    if (iTipType == 5)
    {
      Original_Parameter = Translate("tt05tf1tl0871tv10650tg3tu0");
    }
    if (iTipType == 22)
    {
      Original_Parameter = Translate("tt22tf0tl0425tv00650tg2tu0");
    }
    if (iTipType == 23)
    {
      Original_Parameter = Translate("tt23tf1tl0425tv00600tg2tu0");
    }
    if(0){
      CutOffset = -41.2;
    }
    CutOffset = -25.2;
    safetyVolumeToRemove = 20;
    safetyVolumeToRemoveInTenthMicroliters = safetyVolumeToRemove * 10;
    iTipTypeString = StrIStr(iTipType);
    iTipTypeLength = StrGetLength(iTipTypeString);
    if (iTipTypeLength < 2)
    {
      iTipTypeString = StrConcat2(Translate("0"), iTipType);
    }
    TipTypeToOverwrite = iTipTypeString;
    if (iCuttingLength > 15)
    {
      dialogHandle_15.SetOutput(Translate("The cutting length is too long!\n\n"), Translate("Maximum cutting length = 15mm\n"), Translate("Selected cutting length = "), iCuttingLength, Translate("mm\n\n"), Translate("Please change cutting length variable and restart method\n\n"));
      dialogHandle_15.ShowOutput(Translate("Cutting length too long"), hslOKOnly | hslError | hslDefButton1, hslInfinite);
      abort;
    }
    if (iTipType == 0)
    {
      tipConstantYShift = 0.078;
      MECC::TraceComment(Translate("---------- TipType Standard Tip, no filter"));
      tt = TipTypeToOverwrite;
      tf = 0;
      tl = 520;
      lengthToCutInTenthMillimeters = iCuttingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      type = StrGetType(tl_new);
      if (type == "f")
      {
        tl_new = StrFStr(tl_new);
        tl_new = StrSpanExcluding(tl_new, Translate("."));
      }
      if (type == "i")
      {
        tl_new = StrIStr(tl_new);
      }
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 4000;
      tg = 2;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.142;
      TipConst_StartValue = 0.358;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * iCuttingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * iCuttingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = StrIStr(tv_new);
      tv_new = StrFillLeft(tv_new, Translate("0"), 5);
    }
    if (iTipType == 1)
    {
      tipConstantYShift = 0.078;
      MECC::TraceComment(Translate("---------- TipType Standard Tip with filter"));
      tt = TipTypeToOverwrite;
      tf = 1;
      tl = 520;
      lengthToCutInTenthMillimeters = iCuttingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      type = StrGetType(tl_new);
      if (type == "f")
      {
        tl_new = StrFStr(tl_new);
        tl_new = StrSpanExcluding(tl_new, Translate("."));
      }
      if (type == "i")
      {
        tl_new = StrIStr(tl_new);
      }
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 3600;
      tg = 2;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.142;
      TipConst_StartValue = 0.358;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * iCuttingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * iCuttingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      VolumeOfCuttedEndInTenthMicroliters = MthRound(VolumeOfCuttedEndInTenthMicroliters, 0);
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = StrIStr(tv_new);
      tv_new = StrFillLeft(tv_new, Translate("0"), 5);
    }
    if (iTipType == 4)
    {
      tipConstantYShift = 0.107;
      MECC::TraceComment(Translate("---------- TipType High Volume Tip, no filter"));
      tt = TipTypeToOverwrite;
      tf = 0;
      tl = 871;
      lengthToCutInTenthMillimeters = iCuttingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      type = StrGetType(tl_new);
      if (type == "f")
      {
        tl_new = StrFStr(tl_new);
        tl_new = StrSpanExcluding(tl_new, Translate("."));
      }
      if (type == "i")
      {
        tl_new = StrIStr(tl_new);
      }
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 12500;
      tg = 3;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.171;
      TipConst_StartValue = 0.632;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * iCuttingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * iCuttingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = StrIStr(tv_new);
      tv_new = StrFillLeft(tv_new, Translate("0"), 5);
    }
    if (iTipType == 5)
    {
      tipConstantYShift = 0.107;
      MECC::TraceComment(Translate("---------- TipType High Volume Tip with filter"));
      tt = TipTypeToOverwrite;
      tf = 1;
      tl = 871;
      lengthToCutInTenthMillimeters = iCuttingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      type = StrGetType(tl_new);
      if (type == "f")
      {
        tl_new = StrFStr(tl_new);
        tl_new = StrSpanExcluding(tl_new, Translate("."));
      }
      if (type == "i")
      {
        tl_new = StrIStr(tl_new);
      }
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 10650;
      tg = 3;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.171;
      TipConst_StartValue = 0.632;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * iCuttingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * iCuttingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = StrIStr(tv_new);
      tv_new = StrFillLeft(tv_new, Translate("0"), 5);
    }
    if (iTipType == 22)
    {
      tipConstantYShift = 0.092;
      MECC::TraceComment(Translate("---------- TipType 50ul Tip, no filter"));
      tt = TipTypeToOverwrite;
      tf = 0;
      tl = 420;
      lengthToCutInTenthMillimeters = iCuttingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      type = StrGetType(tl_new);
      if (type == "f")
      {
        tl_new = StrFStr(tl_new);
        tl_new = StrSpanExcluding(tl_new, Translate("."));
      }
      if (type == "i")
      {
        tl_new = StrIStr(tl_new);
      }
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 650;
      tg = 2;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.122;
      TipConst_StartValue = 0.262;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * iCuttingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * iCuttingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = StrIStr(tv_new);
      tv_new = StrFillLeft(tv_new, Translate("0"), 5);
    }
    if (iTipType == 23)
    {
      tipConstantYShift = 0.092;
      MECC::TraceComment(Translate("--------- TipType 50ul Tip with filter"));
      tt = TipTypeToOverwrite;
      tf = 1;
      tl = 420;
      lengthToCutInTenthMillimeters = iCuttingLength * 10;
      tl_new = tl - lengthToCutInTenthMillimeters;
      type = StrGetType(tl_new);
      if (type == "f")
      {
        tl_new = StrFStr(tl_new);
        tl_new = StrSpanExcluding(tl_new, Translate("."));
      }
      if (type == "i")
      {
        tl_new = StrIStr(tl_new);
      }
      tl_new = StrFillLeft(tl_new, Translate("0"), 4);
      tv = 600;
      tg = 2;
      tu = 0;
      TipConst_DeltaPerMillimeter = 0.122;
      TipConst_StartValue = 0.262;
      diameterOnCuttingHeight = TipConst_DeltaPerMillimeter * iCuttingLength;
      diameterOnCuttingHeight = diameterOnCuttingHeight + TipConst_StartValue;
      BaseAreaOnCuttingHeight = diameterOnCuttingHeight * diameterOnCuttingHeight;
      BaseAreaOnCuttingHeight = BaseAreaOnCuttingHeight * 0.7854;
      VolumeOfCuttedEnd = BaseAreaOnCuttingHeight * iCuttingLength;
      VolumeOfCuttedEnd = VolumeOfCuttedEnd / 3;
      VolumeOfCuttedEnd = MthRound(VolumeOfCuttedEnd, 0);
      VolumeOfCuttedEndInTenthMicroliters = VolumeOfCuttedEnd * 10;
      tv_new = tv - VolumeOfCuttedEndInTenthMicroliters;
      tv_new = tv_new - safetyVolumeToRemoveInTenthMicroliters;
      tv_new = StrIStr(tv_new);
      tv_new = StrFillLeft(tv_new, Translate("0"), 5);
    }
    TipTypParameter = StrConcat8(Translate("tt"), TipTypeToOverwrite, Translate("tf"), tf, Translate("tl"), tl_new, Translate("tv"), tv_new);
    TipTypParameter = StrConcat8(TipTypParameter, Translate("tg"), tg, Translate("tu"), tu, Translate(""), Translate(""), Translate(""));
    TrcTrace(Translate("Orig.TipTypParameter = "), Original_Parameter);
    TrcTrace(Translate("New TipTypParameter = "), TipTypParameter);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    TrcTrace(Translate("End of SetCuttedTipTypeByLength"), Translate(""));
  }

  function SetCuttedTipTypeByPartnumber( device & ML_STAR, variable iPartnummer ) void {
    private variable Original_Parameter;
    private variable TipTypParameter;
    private variable validPN_counter;
    private dialog customDialog_16;
    private variable rb_selectPN;
    private variable radioButton_235449;
    private variable radioButton_57549_02;
    private variable radioButton_235451;
    private variable radioButton_235452;
    private variable radioButton_235541;
    private variable rb_abort;
    private variable radioButton_235544;
    private variable radioButton_235444;
    TrcTrace(Translate("Start of SetCuttedTipTypeByPartnumber"), Translate(""));
    validPN_counter = 0;
    if (iPartnummer == "57549-02 US")
    {
      validPN_counter = 1;
    }
    if (iPartnummer == "235449")
    {
      validPN_counter = 1;
    }
    if (iPartnummer == "235451")
    {
      validPN_counter = 1;
    }
    if (iPartnummer == "235452")
    {
      validPN_counter = 1;
    }
    if (iPartnummer == "235541")
    {
      validPN_counter = 1;
    }
    if (iPartnummer == "235444")
    {
      validPN_counter = 1;
    }
    if (validPN_counter < 1)
    {
      customDialog_16.InitCustomDialog("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");
      customDialog_16.ShowCustomDialog();
      rb_abort = customDialog_16.GetCustomDialogProperty( "radioButton_AbortMethod.IsChecked" );
      rb_selectPN = customDialog_16.GetCustomDialogProperty( "radioButton_SelectPN.IsChecked" );
      radioButton_57549_02 = customDialog_16.GetCustomDialogProperty( "radioButton_57549_02.IsChecked" );
      radioButton_235449 = customDialog_16.GetCustomDialogProperty( "radioButton_235449.IsChecked" );
      radioButton_235451 = customDialog_16.GetCustomDialogProperty( "radioButton_235451.IsChecked" );
      radioButton_235452 = customDialog_16.GetCustomDialogProperty( "radioButton_235452.IsChecked" );
      radioButton_235541 = customDialog_16.GetCustomDialogProperty( "radioButton_235541.IsChecked" );
      radioButton_235444 = customDialog_16.GetCustomDialogProperty( "radioButton_235544.IsChecked" );
      if (radioButton_235449 == 1)
      {
        iPartnummer = Translate("235449");
      }
      if (radioButton_235451 == 1)
      {
        iPartnummer = Translate("235451");
      }
      if (radioButton_235452 == 1)
      {
        iPartnummer = Translate("235452");
      }
      if (radioButton_235541 == 1)
      {
        iPartnummer = Translate("235541");
      }
      if (radioButton_235444 == 1)
      {
        iPartnummer = Translate("235444");
      }
      if (radioButton_57549_02 == 1)
      {
        iPartnummer = Translate("57549_02  US");
      }
    }
    if (iPartnummer == "57549-02 US")
    {
      Original_Parameter = Translate("tt01tf1tl0520tv03600tg2tu0");
      TipTypParameter = Translate("tt01tf1tl0437tv03349tg2tu0");
    }
    if (iPartnummer == "235449")
    {
      Original_Parameter = Translate("tt01tf1tl0520tv03600tg2tu0");
      TipTypParameter = Translate("tt01tf1tl0437tv03349tg2tu0");
    }
    if (iPartnummer == "235451")
    {
      Original_Parameter = Translate("tt00tf0tl0520tv04000tg2tu0");
      TipTypParameter = Translate("tt00tf0tl0437tv03750tg2tu0");
    }
    if (iPartnummer == "235452")
    {
      Original_Parameter = Translate("tt01tf1tl0520tv03600tg2tu0");
      TipTypParameter = Translate("tt01tf1tl0493tv03396tg2tu0");
    }
    if (iPartnummer == "235541")
    {
      Original_Parameter = Translate("tt05tf1tl0871tv10650tg3tu0");
      TipTypParameter = Translate("tt05tf1tl0721tv10050tg3tu0");
    }
    if (iPartnummer == "235444")
    {
      Original_Parameter = Translate("tt04tf0tl0871tv12500tg3tu0");
      TipTypParameter = Translate("tt04tf0tl0721tv11900tg3tu0");
    }
    TrcTrace(Translate("Selected Partnummer = "), iPartnummer);
    TrcTrace(Translate("Orig.TipTypParameter = "), Original_Parameter);
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    TrcTrace(Translate("New TipTypParameter = "), TipTypParameter);
    TrcTrace(Translate("End of SetCuttedTipTypeByPartnumber"), Translate(""));
  }

  function ResetTipType( device & ML_STAR, variable iTipType ) void {
    private variable Original_Parameter;
    private variable Original_Command;
    TrcTrace(Translate("Start of ResetTipType"), Translate(""));
    Original_Command = Translate("C0TT");
    if (iTipType == 0)
    {
      Original_Parameter = Translate("tt00tf0tl0520tv04000tg2tu0");
    }
    if (iTipType == 1)
    {
      Original_Parameter = Translate("tt01tf1tl0520tv03600tg2tu0");
    }
    if (iTipType == 4)
    {
      Original_Parameter = Translate("tt04tf0tl0871tv12500tg3tu0");
    }
    if (iTipType == 5)
    {
      Original_Parameter = Translate("tt05tf1tl0871tv10650tg3tu0");
    }
    if (iTipType == 22)
    {
      Original_Parameter = Translate("tt22tf0tl0425tv00650tg2tu0");
    }
    if (iTipType == 23)
    {
      Original_Parameter = Translate("tt23tf1tl0425tv00600tg2tu0");
    }
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    TrcTrace(Translate("Tip type parameters resetted to "), Original_Parameter);
    TrcTrace(Translate("End of ResetTipType"), Translate(""));
  }

  function ResetAllTipTypes( device & ML_STAR ) void {
    private variable Original_Parameter;
    private variable Original_Command;
    TrcTrace(Translate("Start of ResetTipType"), Translate(""));
    Original_Command = Translate("C0TT");
    Original_Parameter = Translate("tt00tf0tl0520tv04000tg2tu0");
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    TrcTrace(Translate("Tip type parameters of standard tip without filter resetted to "), Original_Parameter);
    Original_Parameter = Translate("tt01tf1tl0520tv03600tg2tu0");
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    TrcTrace(Translate("Tip type parameters of standard tip with filter resetted to "), Original_Parameter);
    Original_Parameter = Translate("tt04tf0tl0871tv12500tg3tu0");
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    TrcTrace(Translate("Tip type parameters of high volume tip without filter resetted to "), Original_Parameter);
    Original_Parameter = Translate("tt05tf1tl0871tv10650tg3tu0");
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    TrcTrace(Translate("Tip type parameters of high volume tip with filter resetted to "), Original_Parameter);
    Original_Parameter = Translate("tt22tf0tl0425tv00650tg2tu0");
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    TrcTrace(Translate("Tip type parameters of 50ul tip without filter resetted to "), Original_Parameter);
    Original_Parameter = Translate("tt23tf1tl0425tv00600tg2tu0");
    ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
    TrcTrace(Translate("Tip type parameters of 50ul tip with filter resetted to "), Original_Parameter);
    TrcTrace(Translate("End of ResetAllTipTypes"), Translate(""));
  }
} // library namespace
