#pragma once
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\JsonParser\\JsonParser.hs_"
#include "HSLDevLib.hsl"
#include "HSLErrLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace TRACKGRIPPER {
  private function GripPlateFromTaughtPosition( device & ML_STAR, device & TrackGripper, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, device & TrackGripper, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function LockUnlockDoors( device & ML_STAR, device & TrackGripper, object & i_EndpointOutputDataJSONObject ) void ;
  private function MoveToHomePosition( device & ML_STAR, device & TrackGripper, object & i_EndpointOutputDataJSONObject ) void ;
  private function PlacePlateToTaughtPosition( device & ML_STAR, device & TrackGripper, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
  }

  private function PlacePlateToTaughtPosition( device & ML_STAR, device & TrackGripper, object & i_EndpointOutputDataJSONObject ) void {
    private variable CollisionControl;
    private variable LiftupHeight;
    private variable RetractDistance;
    private variable LabwareOrientation;
    private variable Movement;
    private sequence Sequence;
    private variable CustomErrorHandling;
    private object o_JSONObject;
    private variable PlateLabwareID;
    private variable RecoveryDetails;
    private variable CoordinatedMovement;
    private variable TaughtPathName;
    private variable OpenWidth;
    private variable SpeedPercentage;
    OpenWidth = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:OpenWidth:"));
    TaughtPathName = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TaughtPathName:"));
    CoordinatedMovement = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CoordinatedMovement:"));
    SpeedPercentage = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SpeedPercentage:"));
    CollisionControl = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CollisionControl:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_1 ;
      err.Clear();
      if (CollisionControl == 1)
      {
        if (CoordinatedMovement == 1)
        {
          {
            	TrackGripper._0DEDEEF1_9FC2_46DA_B603_1DF9FFE6D128("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"); // PutPlate
          }
        }
        else
        {
          {
            	TrackGripper._0DEDEEF1_9FC2_46DA_B603_1DF9FFE6D128("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"); // PutPlate
          }
        }
      }
      else
      {
        if (CoordinatedMovement == 1)
        {
          {
            	TrackGripper._0DEDEEF1_9FC2_46DA_B603_1DF9FFE6D128("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"); // PutPlate
          }
        }
        else
        {
          {
            	TrackGripper._0DEDEEF1_9FC2_46DA_B603_1DF9FFE6D128("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"); // PutPlate
          }
        }
      }
      errLabel_1 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
      }   /* end if from skip handler if no error */
    }
    else
    {
      if (CollisionControl == 1)
      {
        if (CoordinatedMovement == 1)
        {
          {
            	TrackGripper._0DEDEEF1_9FC2_46DA_B603_1DF9FFE6D128("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"); // PutPlate
          }
        }
        else
        {
          {
            	TrackGripper._0DEDEEF1_9FC2_46DA_B603_1DF9FFE6D128("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"); // PutPlate
          }
        }
      }
      else
      {
        if (CoordinatedMovement == 1)
        {
          {
            	TrackGripper._0DEDEEF1_9FC2_46DA_B603_1DF9FFE6D128("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"); // PutPlate
          }
        }
        else
        {
          {
            	TrackGripper._0DEDEEF1_9FC2_46DA_B603_1DF9FFE6D128("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"); // PutPlate
          }
        }
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, device & TrackGripper, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "GripPlateFromTaughtPosition")
    {
      GripPlateFromTaughtPosition(ML_STAR, TrackGripper, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "PlacePlateToTaughtPosition")
    {
      PlacePlateToTaughtPosition(ML_STAR, TrackGripper, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "MoveToHomePosition")
    {
      MoveToHomePosition(ML_STAR, TrackGripper, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "LockUnlockDoors")
    {
      LockUnlockDoors(ML_STAR, TrackGripper, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }

  private function LockUnlockDoors( device & ML_STAR, device & TrackGripper, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable CustomErrorHandling;
    private variable LockState;
    LockState = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LockState:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_2 ;
      err.Clear();
      {
        	TrackGripper._AFAF4773_C0BB_4AB0_B44E_96334E7290A0("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"); // DoorLocks
      }
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
      }   /* end if from skip handler if no error */
    }
    else
    {
      {
        	TrackGripper._AFAF4773_C0BB_4AB0_B44E_96334E7290A0("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"); // DoorLocks
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function MoveToHomePosition( device & ML_STAR, device & TrackGripper, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable PlateLabwareID;
    private variable CustomErrorHandling;
    private variable CollisionControl;
    private variable LabwareOrientation;
    private variable SpeedPercentage;
    private variable LabwareID;
    private variable StayAtTraversalHeight;
    private sequence Sequence;
    SpeedPercentage = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SpeedPercentage:"));
    CollisionControl = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CollisionControl:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_3 ;
      err.Clear();
      if (CollisionControl == 1)
      {
        {
          	TrackGripper._B71838B6_BDA2_4718_90A1_0505D04669F4("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"); // ExecPose
        }
      }
      else
      {
        {
          	TrackGripper._B71838B6_BDA2_4718_90A1_0505D04669F4("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"); // ExecPose
        }
      }
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
      }   /* end if from skip handler if no error */
    }
    else
    {
      if (CollisionControl == 1)
      {
        {
          	TrackGripper._B71838B6_BDA2_4718_90A1_0505D04669F4("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"); // ExecPose
        }
      }
      else
      {
        {
          	TrackGripper._B71838B6_BDA2_4718_90A1_0505D04669F4("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"); // ExecPose
        }
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function GripPlateFromTaughtPosition( device & ML_STAR, device & TrackGripper, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable CoordinatedMovement;
    private variable TaughtPathName;
    private variable CustomErrorHandling;
    private variable CollisionControl;
    private variable OpenWidth;
    private variable SpeedPercentage;
    private variable GripForcePercentage;
    OpenWidth = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:OpenWidth:"));
    TaughtPathName = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TaughtPathName:"));
    CoordinatedMovement = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CoordinatedMovement:"));
    GripForcePercentage = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripForcePercentage:"));
    SpeedPercentage = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SpeedPercentage:"));
    CollisionControl = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CollisionControl:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_4 ;
      err.Clear();
      if (CollisionControl == 1)
      {
        if (CoordinatedMovement == 1)
        {
          {
            	TrackGripper._DE80BD9B_1C7E_4D19_AD08_082D8E0E65E4("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"); // GripPlate
          }
        }
        else
        {
          {
            	TrackGripper._DE80BD9B_1C7E_4D19_AD08_082D8E0E65E4("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"); // GripPlate
          }
        }
      }
      else
      {
        if (CoordinatedMovement == 1)
        {
          {
            	TrackGripper._DE80BD9B_1C7E_4D19_AD08_082D8E0E65E4("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"); // GripPlate
          }
        }
        else
        {
          {
            	TrackGripper._DE80BD9B_1C7E_4D19_AD08_082D8E0E65E4("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"); // GripPlate
          }
        }
      }
      errLabel_4 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
      }   /* end if from skip handler if no error */
    }
    else
    {
      if (CollisionControl == 1)
      {
        if (CoordinatedMovement == 1)
        {
          {
            	TrackGripper._DE80BD9B_1C7E_4D19_AD08_082D8E0E65E4("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"); // GripPlate
          }
        }
        else
        {
          {
            	TrackGripper._DE80BD9B_1C7E_4D19_AD08_082D8E0E65E4("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"); // GripPlate
          }
        }
      }
      else
      {
        if (CoordinatedMovement == 1)
        {
          {
            	TrackGripper._DE80BD9B_1C7E_4D19_AD08_082D8E0E65E4("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"); // GripPlate
          }
        }
        else
        {
          {
            	TrackGripper._DE80BD9B_1C7E_4D19_AD08_082D8E0E65E4("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"); // GripPlate
          }
        }
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }
} // library namespace
