#pragma once
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\JsonParser\\JsonParser.hs_"
#include "HSLDevLib.hsl"
#include "HSLErrLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace AUTOLOAD {
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function LoadCarrier( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function MoveAutoLoad( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function UnloadCarrier( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "LoadCarrier")
    {
      LoadCarrier(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "MoveAutoLoad")
    {
      MoveAutoLoad(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "UnloadCarrier")
    {
      UnloadCarrier(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }

  private function MoveAutoLoad( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable CustomErrorHandling;
    private variable TrackNumber;
    private variable RecoveryDetails;
    TrackNumber = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TrackNumber:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_1 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        	RecoveryDetails = arrRetValues[2];
      }
      errLabel_1 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        RecoveryDetails = ErrGetDataAt(3);
      }   /* end if from skip handler if no error */
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
        	RecoveryDetails = arrRetValues[2];
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RawRecoveryDetails"), RecoveryDetails);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function LoadCarrier( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable CustomErrorHandling;
    private variable LabwareID;
    private variable LabwarePositions;
    private variable BarcodeFilePath;
    private variable CarrierRecoveryDetails;
    private variable LabwareRecoveryDetails;
    LabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"));
    BarcodeFilePath = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:BarcodeFilePath:"));
    LabwarePositions = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwarePositions:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_2 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        	CarrierRecoveryDetails = arrRetValues[2];
        	LabwareRecoveryDetails = arrRetValues[3];
      }
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        CarrierRecoveryDetails = ErrGetDataAt(3);
        LabwareRecoveryDetails = ErrGetDataAt(4);
      }   /* end if from skip handler if no error */
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
        	CarrierRecoveryDetails = arrRetValues[2];
        	LabwareRecoveryDetails = arrRetValues[3];
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RawCarrierRecoveryDetails"), CarrierRecoveryDetails);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RawLabwareRecoveryDetails"), LabwareRecoveryDetails);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function UnloadCarrier( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable CustomErrorHandling;
    private variable LabwareID;
    private variable RecoveryDetails;
    LabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"));
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_3 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        	RecoveryDetails = arrRetValues[2];
      }
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        RecoveryDetails = ErrGetDataAt(3);
      }   /* end if from skip handler if no error */
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
        	RecoveryDetails = arrRetValues[2];
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RawRecoveryDetails"), RecoveryDetails);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }
} // library namespace
