#pragma once
#include "HSLSeqLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\JsonParser\\JsonParser.hs_"
#include "HSLErrLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Library\\STAR_Channel_MPH_fwCmd\\STAR_Channel_MPH_fwCmd.hs_"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace CORE96HEAD {
  private function Aspirate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function Dispense( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function Eject( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function FW_AspDis( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function Pickup( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
    STAR_CHANNEL_MPH_FWCMD::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    STAR_CHANNEL_MPH_FWCMD::_ExitLibrary();
  }

  private function Aspirate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private sequence Sequence;
    private variable SeqEnd;
    private variable LiquidFollowing;
    private variable Mode;
    private variable FixedHeight;
    private variable cLLD;
    private variable MixPosition;
    private variable MixCycles;
    private variable RetractDistance;
    private variable SubmergeDepth;
    private variable Volume;
    private variable LiquidClass;
    private variable MixVolume;
    private variable CustomErrorHandling;
    private object o_JSONObject;
    private variable LabwareID;
    private variable RecoveryDetails;
    LabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"));
    Volume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Volume:"));
    Mode = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Mode:"));
    LiquidClass = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidClass:"));
    cLLD = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CapacitiveLiquidLevelDetection:"));
    SubmergeDepth = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SubmergeDepth:"));
    FixedHeight = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:FixHeightFromBottom:"));
    RetractDistance = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistanceForTransportAir:"));
    LiquidFollowing = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidFollowing:"));
    MixCycles = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixCycles:"));
    MixPosition = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixPosition:"));
    MixVolume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixVolume:"));
    HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, LabwareID, 0, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_1 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	RecoveryDetails = arrRetValues[2];
      }
      errLabel_1 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        RecoveryDetails = ErrGetDataAt(3);
      }   /* end if from skip handler if no error */
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        	RecoveryDetails = arrRetValues[2];
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RawRecoveryDetails"), RecoveryDetails);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Dispense( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable SeqEnd;
    private sequence Sequence;
    private variable Mode;
    private variable LiquidFollowing;
    private variable cLLD;
    private variable FixedHeight;
    private variable MixPosition;
    private variable MixCycles;
    private variable MixVolume;
    private variable SideTouch;
    private variable SubmergeDepth;
    private variable RetractDistance;
    private variable Volume;
    private variable LiquidClass;
    private variable CustomErrorHandling;
    private object o_JSONObject;
    private variable LabwareID;
    private variable RecoveryDetails;
    LabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"));
    Volume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Volume:"));
    Mode = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Mode:"));
    FixedHeight = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:FixHeightFromBottom:"));
    RetractDistance = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistanceForTransportAir:"));
    cLLD = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CapacitiveLiquidLevelDetection:"));
    SubmergeDepth = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SubmergeDepth:"));
    LiquidClass = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidClass:"));
    SideTouch = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SideTouch:"));
    LiquidFollowing = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidFollowing:"));
    MixCycles = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixCycles:"));
    MixPosition = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixPosition:"));
    MixVolume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixVolume:"));
    HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, LabwareID, 0, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_2 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        	RecoveryDetails = arrRetValues[2];
      }
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        RecoveryDetails = ErrGetDataAt(3);
      }   /* end if from skip handler if no error */
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        	RecoveryDetails = arrRetValues[2];
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RawRecoveryDetails"), RecoveryDetails);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Pickup( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable SeqEnd;
    private sequence Sequence;
    private variable CustomErrorHandling;
    private object o_JSONObject;
    private variable LabwareID;
    private variable RecoveryDetails;
    LabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"));
    HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, LabwareID, 0, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_3 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        	RecoveryDetails = arrRetValues[2];
      }
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        RecoveryDetails = ErrGetDataAt(3);
      }   /* end if from skip handler if no error */
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        	RecoveryDetails = arrRetValues[2];
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RawRecoveryDetails"), RecoveryDetails);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Eject( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable CustomErrorHandling;
    private variable SeqEnd;
    private sequence Sequence;
    private object o_JSONObject;
    private variable LabwareID;
    private variable RecoveryDetails;
    LabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"));
    HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, LabwareID, 0, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_4 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        	RecoveryDetails = arrRetValues[2];
      }
      errLabel_4 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        RecoveryDetails = ErrGetDataAt(3);
      }   /* end if from skip handler if no error */
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
        	RecoveryDetails = arrRetValues[2];
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RawRecoveryDetails"), RecoveryDetails);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "Pickup")
    {
      Pickup(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Aspirate")
    {
      Aspirate(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Dispense")
    {
      Dispense(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Eject")
    {
      Eject(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "FW_AspDis")
    {
      FW_AspDis(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }

  private function FW_AspDis( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable CustomErrorHandling;
    private variable LiquidClass;
    private variable SeqEnd;
    private sequence Sequence;
    private variable SettlingTimeStoppable;
    private variable LLDSearchHeight;
    private variable LiquidFollowingDistance;
    private variable AspirateTraverseBeforeAspirate;
    private variable AspirateVariable;
    private variable AspirateFixHeightFromBottom;
    private variable AspirateRetractDistanceForTransportAir;
    private variable AspirateVolume;
    private variable AspirateTraverseAfterAspirate;
    private variable AspirateAdditionalSettlingTime;
    private variable DispenseVariable;
    private variable DispenseTraverseBeforeDispense;
    private variable DispenseFixHeightFromBottom;
    private variable AspirateBlowoutVolume;
    private variable DispenseTraverseAfterDispense;
    private variable DispenseBlowoutVolume;
    private variable DispenseVolume;
    private variable DispenseAdditionalSettlingTime;
    private variable LabwareID;
    LabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"));
    LLDSearchHeight = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LLDSearchHeight:"));
    LiquidClass = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidClass:"));
    SettlingTimeStoppable = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SettlingTimeStoppable:"));
    LiquidFollowingDistance = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidFollowingDistance:"));
    AspirateVariable = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Aspirate:"));
    AspirateTraverseBeforeAspirate = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateTraverseBeforeAspirate:"));
    AspirateTraverseAfterAspirate = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateTraverseAfterAspirate:"));
    AspirateFixHeightFromBottom = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateFixHeightFromBottom:"));
    AspirateRetractDistanceForTransportAir = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateRetractDistanceForTransportAir:"));
    AspirateVolume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateVolume:"));
    AspirateAdditionalSettlingTime = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateAdditionalSettlingTime:"));
    AspirateBlowoutVolume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateBlowoutVolume:"));
    DispenseVariable = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Dispense:"));
    DispenseTraverseBeforeDispense = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseTraverseBeforeDispense:"));
    DispenseTraverseAfterDispense = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseTraverseAfterDispense:"));
    DispenseFixHeightFromBottom = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseFixHeightFromBottom:"));
    DispenseVolume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseVolume:"));
    DispenseAdditionalSettlingTime = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseAdditionalSettlingTime:"));
    DispenseBlowoutVolume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseBlowoutVolume:"));
    HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, LabwareID, 0, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_5 ;
      err.Clear();
      STAR_CHANNEL_MPH_FWCMD::_96HeadAsp_Disp(Translate(""), AspirateVariable, DispenseVariable, AspirateTraverseBeforeAspirate, AspirateTraverseAfterAspirate, LLDSearchHeight, AspirateFixHeightFromBottom, AspirateRetractDistanceForTransportAir, AspirateVolume, LiquidClass, AspirateAdditionalSettlingTime, DispenseTraverseBeforeDispense, DispenseTraverseAfterDispense, DispenseVolume, DispenseFixHeightFromBottom, ML_STAR, Sequence, AspirateBlowoutVolume, DispenseBlowoutVolume, 1, DispenseAdditionalSettlingTime, SettlingTimeStoppable, LiquidFollowingDistance);
      errLabel_5 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
      }   /* end if from skip handler if no error */
    }
    else
    {
      STAR_CHANNEL_MPH_FWCMD::_96HeadAsp_Disp(Translate(""), AspirateVariable, DispenseVariable, AspirateTraverseBeforeAspirate, AspirateTraverseAfterAspirate, LLDSearchHeight, AspirateFixHeightFromBottom, AspirateRetractDistanceForTransportAir, AspirateVolume, LiquidClass, AspirateAdditionalSettlingTime, DispenseTraverseBeforeDispense, DispenseTraverseAfterDispense, DispenseVolume, DispenseFixHeightFromBottom, ML_STAR, Sequence, AspirateBlowoutVolume, DispenseBlowoutVolume, 1, DispenseAdditionalSettlingTime, SettlingTimeStoppable, LiquidFollowingDistance);
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }
} // library namespace
