#pragma once
#include "plh\\shared\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLML_STARLib.hsl"
#include "plh\\shared\\Server\\JsonParser\\JsonParser.hs_"
#include "HSLSeqLib.hsl"
#include "HSLErrLib.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLDevLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace HSLML_STARLIB {
  private function AntiDropletControl_1000uLChannel_Off( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function AntiDropletControl_1000uLChannel_On( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function AspirationMonitoring_1000uLChannel_Off( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function AspirationMonitoring_1000uLChannel_On( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function ClotDetectionMonitoring_1000uLChannel_Off( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function ClotDetectionMonitoring_1000uLChannel_On( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ACTIONSERVERENDPOINTS::_InitLibrary();
    JSONPARSER::_InitLibrary();
  }
  function _ExitLibrary() {
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    JSONPARSER::_ExitLibrary();
  }

  private function AntiDropletControl_1000uLChannel_Off( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    HSLJsonLib::Create(o_JSONObject);
    HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "AntiDropletControl_1000uLChannel_Off")
    {
      AntiDropletControl_1000uLChannel_Off(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "AntiDropletControl_1000uLChannel_On")
    {
      AntiDropletControl_1000uLChannel_On(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "AspirationMonitoring_1000uLChannel_Off")
    {
      AspirationMonitoring_1000uLChannel_Off(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "AspirationMonitoring_1000uLChannel_On")
    {
      AspirationMonitoring_1000uLChannel_On(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "ClotDetectionMonitoring_1000uLChannel_Off")
    {
      ClotDetectionMonitoring_1000uLChannel_Off(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "ClotDetectionMonitoring_1000uLChannel_On")
    {
      ClotDetectionMonitoring_1000uLChannel_On(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }

  private function AntiDropletControl_1000uLChannel_On( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    HSLJsonLib::Create(o_JSONObject);
    HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function AspirationMonitoring_1000uLChannel_Off( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    HSLJsonLib::Create(o_JSONObject);
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function AspirationMonitoring_1000uLChannel_On( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    HSLJsonLib::Create(o_JSONObject);
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function ClotDetectionMonitoring_1000uLChannel_Off( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    HSLJsonLib::Create(o_JSONObject);
    HSLML_STAR::ClotDetectionMonitoring_1000ulChannel_Off(ML_STAR);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function ClotDetectionMonitoring_1000uLChannel_On( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    HSLJsonLib::Create(o_JSONObject);
    HSLML_STAR::ClotDetectionMonitoring_1000ulChannel_On(ML_STAR);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }
} // library namespace
