 namespace _Method { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _ActionServer { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _StateServer { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _Method { #include "HSLJson\\HSLJson.hsl" }
 namespace _ActionServer { #include "HSLJson\\HSLJson.hsl" }
 namespace _StateServer { #include "HSLJson\\HSLJson.hsl" }
 namespace _Method { #include "plh\\shared\\Server\\Logger\\Logger.hs_" }
 namespace _ActionServer { #include "plh\\shared\\Server\\Logger\\Logger.hs_" }
 namespace _StateServer { #include "plh\\shared\\Server\\Logger\\Logger.hs_" }
 namespace _Method { #include "plh\\shared\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_" }
 namespace _ActionServer { #include "plh\\shared\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_" }
 namespace _StateServer { #include "plh\\shared\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_" }
 namespace _ActionServerProcessa { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _ActionServerProcessa { #include "HSLJson\\HSLJson.hsl" }
 namespace _ActionServerProcessa { #include "plh\\shared\\Server\\Logger\\Logger.hs_" }
 namespace _ActionServerProcessa { #include "plh\\shared\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_" }
 namespace _ActionServerProc { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _ActionServerProc { #include "HSLJson\\HSLJson.hsl" }
 namespace _ActionServerProc { #include "plh\\shared\\Server\\Logger\\Logger.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_" }
 namespace _ActionServerProc { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _ActionServerProc { #include "HSLJson\\HSLJson.hsl" }
 namespace _ActionServerProc { #include "plh\\shared\\Server\\Logger\\Logger.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_" }
 namespace _StateServerProc { #include "HSLHttp\\HSLHttp.hsl" }
 namespace _StateServerProc { #include "HSLJson\\HSLJson.hsl" }
 namespace _StateServerProc { #include "plh\\shared\\Server\\Logger\\Logger.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_" }
 namespace _Method { #include "plh\\shared\\Server\\StateServerEndpoints\\StateServerEndpoints.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\Server\\StateServerEndpoints\\StateServerEndpoints.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\Server\\StateServerEndpoints\\StateServerEndpoints.hs_" }
 namespace _Method { #include "plh\\shared\\_Visual_NTR_Library\\_Visual_NTR_Library.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\_Visual_NTR_Library\\_Visual_NTR_Library.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\_Visual_NTR_Library\\_Visual_NTR_Library.hs_" }
 namespace _Method { #include "plh\\shared\\SetCuttedTipType\\CuttedTipType.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\SetCuttedTipType\\CuttedTipType.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\SetCuttedTipType\\CuttedTipType.hs_" }
 namespace _Method { #include "plh\\shared\\HamiltonHeaterCooler\\HamiltonHeaterCooler.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\HamiltonHeaterCooler\\HamiltonHeaterCooler.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\HamiltonHeaterCooler\\HamiltonHeaterCooler.hs_" }
 namespace _Method { #include "plh\\shared\\HSLHamHeaterShakerLib\\_HSLHamHeaterShakerLib.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\HSLHamHeaterShakerLib\\_HSLHamHeaterShakerLib.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\HSLHamHeaterShakerLib\\_HSLHamHeaterShakerLib.hs_" }
 namespace _Method { #include "plh\\shared\\HSLLabwrAccess\\HSLLabwrAccess.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\HSLLabwrAccess\\HSLLabwrAccess.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\HSLLabwrAccess\\HSLLabwrAccess.hs_" }
 namespace _Method { #include "plh\\shared\\HSL_LiquidClassLib\\HSL_LiquidClassLib.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\HSL_LiquidClassLib\\HSL_LiquidClassLib.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\HSL_LiquidClassLib\\HSL_LiquidClassLib.hs_" }
 namespace _Method { #include "plh\\shared\\Server\\JsonParser\\JsonParser.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\Server\\JsonParser\\JsonParser.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\Server\\JsonParser\\JsonParser.hs_" }
 namespace _Method { #include "plh\\shared\\HSLVacuuBrandPump\\HSLVacuuBrandPump.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\HSLVacuuBrandPump\\HSLVacuuBrandPump.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\HSLVacuuBrandPump\\HSLVacuuBrandPump.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _ActionServerProc { #include "HSLTrcLib.hsl" }
 namespace _StateServerProc { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "plh\\shared\\ML_STAR\\Channel1000uL.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\ML_STAR\\Channel1000uL.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\ML_STAR\\Channel1000uL.hs_" }
 namespace _Method { #include "plh\\shared\\ML_STAR\\Channel1000uLCOREGrip.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\ML_STAR\\Channel1000uLCOREGrip.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\ML_STAR\\Channel1000uLCOREGrip.hs_" }
 namespace _Method { #include "plh\\shared\\ML_STAR\\CORE96Head.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\ML_STAR\\CORE96Head.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\ML_STAR\\CORE96Head.hs_" }
 namespace _Method { #include "plh\\shared\\ML_STAR\\iSwap.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\ML_STAR\\iSwap.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\ML_STAR\\iSwap.hs_" }
 namespace _Method { #include "plh\\shared\\ML_STAR\\Autoload.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\ML_STAR\\Autoload.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\ML_STAR\\Autoload.hs_" }
 namespace _Method { #include "plh\\shared\\ML_STAR\\ML_STAR.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\ML_STAR\\ML_STAR.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\ML_STAR\\ML_STAR.hs_" }
 namespace _Method { #include "plh\\shared\\HSLTipCountingLib\\_HSLTipCountingLib.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\HSLTipCountingLib\\_HSLTipCountingLib.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\HSLTipCountingLib\\_HSLTipCountingLib.hs_" }
 namespace _Method { #include "plh\\shared\\General\\Timer.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\General\\Timer.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\General\\Timer.hs_" }
 namespace _Method { #include "plh\\vantage\\EntryExit\\EntryExit.hs_" }
 namespace _ActionServerProc { #include "plh\\vantage\\EntryExit\\EntryExit.hs_" }
 namespace _StateServerProc { #include "plh\\vantage\\EntryExit\\EntryExit.hs_" }
 namespace _Method { #include "plh\\vantage\\TrackGripper\\TrackGripper.hs_" }
 namespace _ActionServerProc { #include "plh\\vantage\\TrackGripper\\TrackGripper.hs_" }
 namespace _StateServerProc { #include "plh\\vantage\\TrackGripper\\TrackGripper.hs_" }
 namespace _Method { #include "plh\\vantage\\FlipTubeTool\\FlipTubeTool.hs_" }
 namespace _ActionServerProc { #include "plh\\vantage\\FlipTubeTool\\FlipTubeTool.hs_" }
 namespace _StateServerProc { #include "plh\\vantage\\FlipTubeTool\\FlipTubeTool.hs_" }
#include "plh\\active_layout\\active_layout.res"
 namespace _Method { #include "plh\\shared\\HSLHiGCentrifugeLib\\HSLHiGCentrifugeLib.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\HSLHiGCentrifugeLib\\HSLHiGCentrifugeLib.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\HSLHiGCentrifugeLib\\HSLHiGCentrifugeLib.hs_" }
 namespace _Method { #include "plh\\shared\\HSLML_STARLib\\HSLML_STARLib.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\HSLML_STARLib\\HSLML_STARLib.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\HSLML_STARLib\\HSLML_STARLib.hs_" }
 namespace _Method { #include "plh\\shared\\PlateEditor96\\_PlateEditor96.hs_" }
 namespace _ActionServerProc { #include "plh\\shared\\PlateEditor96\\_PlateEditor96.hs_" }
 namespace _StateServerProc { #include "plh\\shared\\PlateEditor96\\_PlateEditor96.hs_" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _ActionServerProc { #include "HSLSeqLib.hsl" }
 namespace _StateServerProc { #include "HSLSeqLib.hsl" }
variable StateServerProc;
variable ActionServerProc;
global device ML_STAR ("plh\\active_layout\\active_layout.lay", "ML_STAR", hslTrue);
global device EntryExit ("plh\\active_layout\\active_layout.lay", "EntryExit", hslTrue);
global device TrackGripper ("plh\\active_layout\\active_layout.lay", "TrackGripper", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _ActionServerProc { #include "HSLMETEDLib.hs_" }
 namespace _StateServerProc { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _ActionServerProc { #include "HSLMECCLib.hs_" }
 namespace _StateServerProc { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _ActionServerProc { #include "HSLPTLLib.hsl" }
 namespace _StateServerProc { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "templates\\HSLPipetteWizard.hsl" }
 namespace _ActionServerProc { #include "templates\\HSLPipetteWizard.hsl" }
 namespace _StateServerProc { #include "templates\\HSLPipetteWizard.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }
 namespace _ActionServerProc {  #include __filename__ ".sub"  }
 namespace _StateServerProc {  #include __filename__ ".sub"  }
namespace _ActionServerProc{ function tfn_ActionServerProc () {
    ActionServer();
  } }
namespace _StateServerProc{ function tfn_StateServerProc () {
    StateServer();
  } }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    LOGGER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
    STATESERVERENDPOINTS::_InitLibrary();
    _VISUAL_NTR_LIBRARY::_InitLibrary();
    CUTTEDTIPTYPE::_InitLibrary();
    HAMILTONHEATERCOOLER::_InitLibrary();
    _HSLHAMHEATERSHAKERLIB::_InitLibrary();
    HSLLABWRACCESS::_InitLibrary();
    HSL_LIQUIDCLASSLIB::_InitLibrary();
    JSONPARSER::_InitLibrary();
    HSLVACUUBRANDPUMP::_InitLibrary();
    CHANNEL1000UL::_InitLibrary();
    CHANNEL1000ULCOREGRIP::_InitLibrary();
    CORE96HEAD::_InitLibrary();
    ISWAP::_InitLibrary();
    AUTOLOAD::_InitLibrary();
    ML_STAR::_InitLibrary();
    _HSLTIPCOUNTINGLIB::_InitLibrary();
    TIMER::_InitLibrary();
    ENTRYEXIT::_InitLibrary();
    TRACKGRIPPER::_InitLibrary();
    FLIPTUBETOOL::_InitLibrary();
    HSLHIGCENTRIFUGELIB::_InitLibrary();
    HSLML_STARLIB::_InitLibrary();
    _PLATEEDITOR96::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    {
      	EntryExit._99C02468_3A8F_41DC_86EE_32F35ECF339A("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"); // Initialize
    }
    {
      	TrackGripper._5486C916_CCE0_472B_AB7C_45B597C4F704("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"); // Initialize
    }
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    LOGGER::EnableOutput(Translate("True"));
    HSLHttp::SetTraceLevel(0);
    HSLJsonLib::SetTraceLevel(0);
    ActionServerProc = Fork("_ActionServerProc::tfn_ActionServerProc");
    if( ActionServerProc == 0 )
    {
          MECC::RaiseRuntimeErrorEx(-1590820608, MECC::IDS::stepNameThreadBegin, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    StateServerProc = Fork("_StateServerProc::tfn_StateServerProc");
    if( StateServerProc == 0 )
    {
          MECC::RaiseRuntimeErrorEx(-1590820608, MECC::IDS::stepNameThreadBegin, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    LOGGER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    STATESERVERENDPOINTS::_ExitLibrary();
    _VISUAL_NTR_LIBRARY::_ExitLibrary();
    CUTTEDTIPTYPE::_ExitLibrary();
    HAMILTONHEATERCOOLER::_ExitLibrary();
    _HSLHAMHEATERSHAKERLIB::_ExitLibrary();
    HSLLABWRACCESS::_ExitLibrary();
    HSL_LIQUIDCLASSLIB::_ExitLibrary();
    JSONPARSER::_ExitLibrary();
    HSLVACUUBRANDPUMP::_ExitLibrary();
    CHANNEL1000UL::_ExitLibrary();
    CHANNEL1000ULCOREGRIP::_ExitLibrary();
    CORE96HEAD::_ExitLibrary();
    ISWAP::_ExitLibrary();
    AUTOLOAD::_ExitLibrary();
    ML_STAR::_ExitLibrary();
    _HSLTIPCOUNTINGLIB::_ExitLibrary();
    TIMER::_ExitLibrary();
    ENTRYEXIT::_ExitLibrary();
    TRACKGRIPPER::_ExitLibrary();
    FLIPTUBETOOL::_ExitLibrary();
    HSLHIGCENTRIFUGELIB::_ExitLibrary();
    HSLML_STARLIB::_ExitLibrary();
    _PLATEEDITOR96::_ExitLibrary();
  } }
