#pragma once
#include "plh\\plh\\driver\\HAMILTON\\backend\\library\\shared\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLML_STARLib.hsl"
#include "BioNex HiG\\HSLHiGCentrifugeLib.hsl"
#include "HSLErrLib.hsl"
#include "plh\\plh\\driver\\HAMILTON\\backend\\library\\shared\\Server\\JsonParser\\JsonParser.hs_"
#include "plh\\plh\\driver\\HAMILTON\\backend\\library\\shared\\Server\\StateServerEndpoints\\StateServerEndpoints.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace HSLHIGCENTRIFUGELIB {
  private function AbortSpin( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function CloseShield( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function Connect( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function Disconnect( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function Home( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function IsSpinning( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function OpenShield( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function Spin( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ACTIONSERVERENDPOINTS::_InitLibrary();
    JSONPARSER::_InitLibrary();
    STATESERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    JSONPARSER::_ExitLibrary();
    STATESERVERENDPOINTS::_ExitLibrary();
  }

  private function AbortSpin( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable Status;
    HSLJsonLib::Create(o_JSONObject);
    Status = HSLHiGCentrifugeLib::AbortSpin();
    if (Status != 0)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "AbortSpin")
    {
      AbortSpin(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "CloseShield")
    {
      CloseShield(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Connect")
    {
      Connect(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Disconnect")
    {
      Disconnect(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Home")
    {
      Home(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "IsSpinning")
    {
      IsSpinning(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "OpenShield")
    {
      OpenShield(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Spin")
    {
      Spin(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }

  private function CloseShield( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable Status;
    HSLJsonLib::Create(o_JSONObject);
    Status = HSLHiGCentrifugeLib::CloseShield();
    if (Status != 0)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Connect( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable AdapterID;
    private variable SimulateMode;
    private variable FirmwareVersion;
    private variable Status;
    AdapterID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AdapterID:"));
    HSLJsonLib::Create(o_JSONObject);
    SimulateMode = HSLML_STAR::IsSimulatorMode(ML_STAR);
    Status = HSLHiGCentrifugeLib::Connect(Translate("ABN Centrifuge Device"), AdapterID, SimulateMode, FirmwareVersion);
    if (Status != 0)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    if(0){
      HSLJsonLib::SetStringProperty(o_JSONObject, Translate("FirmwareVersion"), FirmwareVersion);
    }
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Disconnect( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable Status;
    HSLJsonLib::Create(o_JSONObject);
    Status = HSLHiGCentrifugeLib::Disconnect();
    if (Status != 0)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Home( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable Status;
    HSLJsonLib::Create(o_JSONObject);
    Status = HSLHiGCentrifugeLib::Home();
    if (Status != 0)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function IsSpinning( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable Status;
    private variable Spinning;
    HSLJsonLib::Create(o_JSONObject);
    Status = HSLHiGCentrifugeLib::IsSpinning(Spinning);
    if (Status != 0)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    if (Spinning == 0)
    {
      Spinning = 0;
    }
    else
    {
      Spinning = 1;
    }
    HSLJsonLib::SetBooleanProperty(o_JSONObject, Translate("IsSpinning"), Spinning);
    STATESERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function OpenShield( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable Status;
    private variable BucketIndex;
    BucketIndex = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:BucketIndex:"));
    HSLJsonLib::Create(o_JSONObject);
    Status = HSLHiGCentrifugeLib::OpenShield(BucketIndex);
    if (Status != 0)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Spin( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable Status;
    private variable DecelerationPercent;
    private variable GForce;
    private variable AccelerationPercent;
    GForce = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GForce:"));
    AccelerationPercent = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AccelerationPercent:"));
    DecelerationPercent = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DecelerationPercent:"));
    HSLJsonLib::Create(o_JSONObject);
    Status = HSLHiGCentrifugeLib::Spin(GForce, AccelerationPercent, DecelerationPercent, 216000);
    if (Status != 0)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }
} // library namespace
