#pragma once
#include "plh\\plh\\driver\\HAMILTON\\backend\\library\\shared\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLML_STARLib.hsl"
#include "plh\\plh\\driver\\HAMILTON\\backend\\library\\shared\\Server\\JsonParser\\JsonParser.hs_"
#include "HSLSeqLib.hsl"
#include "HSLErrLib.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLDevLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace HSLML_STARLIB {
  private function AntiDropletControl_1000uLChannel_Off( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function AntiDropletControl_1000uLChannel_On( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function AspirationMonitoring_1000uLChannel_Off( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function AspirationMonitoring_1000uLChannel_On( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function ClotDetectionMonitoring_1000uLChannel_Off( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function ClotDetectionMonitoring_1000uLChannel_On( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function GetContainerVolume( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function MeasureContainerVolume( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ACTIONSERVERENDPOINTS::_InitLibrary();
    JSONPARSER::_InitLibrary();
  }
  function _ExitLibrary() {
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    JSONPARSER::_ExitLibrary();
  }

  private function AntiDropletControl_1000uLChannel_Off( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    HSLJsonLib::Create(o_JSONObject);
    HSLML_STAR::AntiDropletControl_1000ulChannel_Off(ML_STAR);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "AntiDropletControl_1000uLChannel_Off")
    {
      AntiDropletControl_1000uLChannel_Off(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "AntiDropletControl_1000uLChannel_On")
    {
      AntiDropletControl_1000uLChannel_On(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "AspirationMonitoring_1000uLChannel_Off")
    {
      AspirationMonitoring_1000uLChannel_Off(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "AspirationMonitoring_1000uLChannel_On")
    {
      AspirationMonitoring_1000uLChannel_On(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "ClotDetectionMonitoring_1000uLChannel_Off")
    {
      ClotDetectionMonitoring_1000uLChannel_Off(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "ClotDetectionMonitoring_1000uLChannel_On")
    {
      ClotDetectionMonitoring_1000uLChannel_On(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }

  private function AntiDropletControl_1000uLChannel_On( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    HSLJsonLib::Create(o_JSONObject);
    HSLML_STAR::AntiDropletControl_1000ulChannel_On(ML_STAR);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function AspirationMonitoring_1000uLChannel_Off( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    HSLJsonLib::Create(o_JSONObject);
    HSLML_STAR::AspirationMonitoring_1000ulChannel_Off(ML_STAR);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function AspirationMonitoring_1000uLChannel_On( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    HSLJsonLib::Create(o_JSONObject);
    HSLML_STAR::AspirationMonitoring_1000ulChannel_On(ML_STAR);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function ClotDetectionMonitoring_1000uLChannel_Off( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    HSLJsonLib::Create(o_JSONObject);
    HSLML_STAR::ClotDetectionMonitoring_1000ulChannel_Off(ML_STAR);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function ClotDetectionMonitoring_1000uLChannel_On( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    HSLJsonLib::Create(o_JSONObject);
    HSLML_STAR::ClotDetectionMonitoring_1000ulChannel_On(ML_STAR);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function GetContainerVolume( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable PlateLabwareID;
    private variable GripHeight;
    private variable GripWidth;
    private variable RecoveryDetails;
    private variable CustomErrorHandling;
    private variable InverseGrip;
    private variable GripForce;
    private variable CollisionControl;
    private variable GripMode;
    private variable Tolerance;
    private variable OpenWidth;
    private sequence Sequence;
    private variable MaxHeightDifference;
    private variable cLLD;
    private variable pLLD;
    private variable ChannelSelection;
    private variable ChannelNumberArray[];
    private variable LabwareIDArray[];
    private variable PositionIDArray[];
    private variable Counter;
    private variable NumLabwareIDs;
    private variable SeqEnd;
    private variable NumChannels;
    private variable Volume;
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumber:"), ChannelNumberArray);
    NumChannels=ChannelNumberArray.GetSize();
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetArray(o_JSONObject, Translate("mLVolumes"));
    HSLJsonLib::SetArrayLength(o_JSONObject, Translate("mLVolumes"), NumChannels);
    {
      for(Counter = 0; Counter < NumChannels;)
      {
        Counter = Counter + 1;
        Volume = HSLML_STAR::GetContainerVolume(Counter);
        if (Volume <= 0)
        {
          HSLJsonLib::SetFloatArrayElement(o_JSONObject, Translate("mLVolumes"), Counter, 0.0);
        }
        else
        {
          HSLJsonLib::SetFloatArrayElement(o_JSONObject, Translate("mLVolumes"), Counter, Volume);
        }
      }
    }
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function MeasureContainerVolume( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable MaxHeightDifference;
    private variable Counter;
    private variable cLLD;
    private variable NumLabwareIDs;
    private variable pLLD;
    private variable ChannelSelection;
    private variable SeqEnd;
    private sequence Sequence;
    private variable ChannelNumberArray[];
    private variable LabwareIDArray[];
    private variable PositionIDArray[];
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"), LabwareIDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PositionID:"), PositionIDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumber:"), ChannelNumberArray);
    ChannelSelection = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumberString:"));
    cLLD = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CapacitiveLiquidLevelDetection:"));
    pLLD = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PressureLiquidLevelDetection:"));
    MaxHeightDifference = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MaxHeightDifference:"));
    NumLabwareIDs=LabwareIDArray.GetSize();
    {
      for(Counter = 0; Counter < NumLabwareIDs;)
      {
        Counter = Counter + 1;
        SeqAdd(Sequence, LabwareIDArray.ElementAt( Counter -1), PositionIDArray.ElementAt( Counter -1));
      }
    }
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    HSLML_STAR::MeasureContainerVolume2(ML_STAR, Sequence, 1, ChannelSelection, cLLD, pLLD, MaxHeightDifference);
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }
} // library namespace
