#pragma once
#include "HSLVacuuBrandPump.hsl"
#include "plh\\plh\\driver\\HAMILTON\\backend\\library\\shared\\Server\\JsonParser\\JsonParser.hs_"
#include "plh\\plh\\driver\\HAMILTON\\backend\\library\\shared\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "plh\\plh\\driver\\HAMILTON\\backend\\library\\shared\\Server\\StateServerEndpoints\\StateServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLErrLib.hsl"
#include "HSLTrcLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace HSLVACUUBRANDPUMP {
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function Initialize( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function OpenAirAdmittanceValve( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function ReqActualPressure( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function StartPressureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function StopPumpImmediately( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function Terminate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
    STATESERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    STATESERVERENDPOINTS::_ExitLibrary();
  }

  private function Initialize( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ComPort;
    private variable PumpID;
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    private variable Status;
    ComPort = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ComPort:"));
    PumpID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PumpID:"));
    Status = HSLVacuuBrandPump::Initialize(PumpID, ComPort);
    if (Status == 3)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function StartPressureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable PumpID;
    private variable Pressure;
    private variable AmbientPressure;
    private variable VacuumPressure;
    private object o_JSONObject;
    private variable Status;
    PumpID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PumpID:"));
    Pressure = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Pressure:"));
    HSLJsonLib::Create(o_JSONObject);
    Status = HSLVacuuBrandPump::StartPressureControl(PumpID, Pressure, 999999, Translate("n"), 0);
    if (Status == 3)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function StopPumpImmediately( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable PumpID;
    private timer VacuumTimer;
    private object o_JSONObject;
    private variable Status;
    PumpID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PumpID:"));
    HSLJsonLib::Create(o_JSONObject);
    Status = HSLVacuuBrandPump::StopPumpImmediatly(PumpID);
    if (Status == 3)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function ReqActualPressure( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable PumpID;
    private variable Pressure;
    private object o_JSONObject;
    PumpID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PumpID:"));
    HSLJsonLib::Create(o_JSONObject);
    Pressure = HSLVacuuBrandPump::ReqActualPressure(PumpID);
    if (Pressure == -1)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    HSLJsonLib::SetIntegerProperty(o_JSONObject, Translate("Pressure"), Pressure);
    STATESERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "Initialize")
    {
      Initialize(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "OpenAirAdmittanceValve")
    {
      OpenAirAdmittanceValve(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "ReqActualPressure")
    {
      ReqActualPressure(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "StartPressureControl")
    {
      StartPressureControl(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "StopPumpImmediately")
    {
      StopPumpImmediately(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Terminate")
    {
      Terminate(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }

  private function OpenAirAdmittanceValve( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable PumpID;
    private variable Status;
    private timer VacuumTimer;
    PumpID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PumpID:"));
    HSLJsonLib::Create(o_JSONObject);
    Status = HSLVacuuBrandPump::OpenAirAdmittanceValve(PumpID);
    if (Status == 3)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Terminate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable PumpID;
    private variable Status;
    PumpID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PumpID:"));
    HSLJsonLib::Create(o_JSONObject);
    Status = HSLVacuuBrandPump::Terminate(PumpID);
    if (Status == 3)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }
} // library namespace
