#pragma once
#include "Hamilton HeaterCooler\\HamiltonHeaterCooler.hsl"
#include "plh\\plh\\driver\\HAMILTON\\backend\\library\\shared\\Server\\JsonParser\\JsonParser.hs_"
#include "plh\\plh\\driver\\HAMILTON\\backend\\library\\shared\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "plh\\plh\\driver\\HAMILTON\\backend\\library\\shared\\Server\\StateServerEndpoints\\StateServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLErrLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace HAMILTONHEATERCOOLER {
  private function Connect( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function GetTemperature( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function SetTemperature( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function StopTemperatureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
    STATESERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    STATESERVERENDPOINTS::_ExitLibrary();
  }

  private function Connect( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ComPort;
    private variable Name;
    private variable Trash;
    private variable HandleArray[];
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    private variable Handle;
    private variable Status;
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    ComPort = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ComPort:"));
    HSLJsonLib::Create(o_JSONObject);
    HandleArray.SetSize(0);
    HandleArray.AddAsLast(Translate("Simulation"));
    Status = HamiltonHeaterCooler::Connect(ComPort, 0, Trash, HandleArray);
    if (Status != 0)
    {
      Handle = 0;
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    else
    {
      Handle = HandleArray.ElementAt( 1 -1);
    }
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("HandleID"), Handle);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function SetTemperature( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable HandleID;
    private variable Temperature;
    private variable Name;
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    private variable FloatTemperature;
    private variable Status;
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    HandleID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:HandleID:"));
    Temperature = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Temperature:"));
    HSLJsonLib::Create(o_JSONObject);
    FloatTemperature = Temperature + 0.0;
    Status = HamiltonHeaterCooler::SetTemperature(HandleID, FloatTemperature, FloatTemperature, FloatTemperature, HamiltonHeaterCooler::_FALSE, 0);
    if (Status != 0)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function StopTemperatureControl( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable HandleID;
    private variable Name;
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    private variable Status;
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    HandleID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:HandleID:"));
    HSLJsonLib::Create(o_JSONObject);
    Status = HamiltonHeaterCooler::StopTemperatureControl(HandleID);
    if (Status != 0)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function GetTemperature( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable HandleID;
    private variable Temperature;
    private variable Name;
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    private variable Status;
    Name = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"));
    HandleID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:HandleID:"));
    HSLJsonLib::Create(o_JSONObject);
    Status = HamiltonHeaterCooler::GetTemperature(HandleID, Temperature);
    if (Status != 0)
    {
      ErrSetDescription(Translate("Peripheral device communication failed"));
    }
    if (Temperature == 0)
    {
      HSLJsonLib::SetFloatProperty(o_JSONObject, Translate("Temperature"), 0.0);
    }
    else
    {
      HSLJsonLib::SetFloatProperty(o_JSONObject, Translate("Temperature"), Temperature);
    }
    STATESERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "Connect")
    {
      Connect(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "SetTemperature")
    {
      SetTemperature(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "GetTemperature")
    {
      GetTemperature(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "StopTemperatureControl")
    {
      StopTemperatureControl(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }
} // library namespace
