#pragma once
#include "HSLSeqLib.hsl"
#include "plh\\plh\\driver\\HAMILTON\\backend\\library\\shared\\Server\\JsonParser\\JsonParser.hs_"
#include "plh\\plh\\driver\\HAMILTON\\backend\\library\\shared\\Server\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "plh\\plh\\driver\\HAMILTON\\backend\\library\\shared\\STAR_Channel_MPH_fwCmd\\STAR_Channel_MPH_fwCmd.hs_"
#include "HSLErrLib.hsl"
#include "plh\\plh\\driver\\HAMILTON\\backend\\library\\shared\\Server\\StateServerEndpoints\\StateServerEndpoints.hs_"
#include "HSLTrcLib.hsl"
#include "HSLLabwrAccess\\HSLLabwrAccess.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace CHANNEL1000UL {
  private function Aspirate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function Dispense( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function Eject( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function FW_AspDis( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function GetLastLiquidLevel( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function MoveToPositionSequence( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function PadArray( variable & io_Array[], variable & PadIndices[] ) void ;
  private function Pickup( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
    STAR_CHANNEL_MPH_FWCMD::_InitLibrary();
    STATESERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    STAR_CHANNEL_MPH_FWCMD::_ExitLibrary();
    STATESERVERENDPOINTS::_ExitLibrary();
  }

  private function Aspirate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ChannelSelection;
    private sequence Sequence;
    private variable RetractDistanceArray[];
    private variable MaxHeightDifferenceArray[];
    private variable VolumeArray[];
    private variable MixCyclesArray[];
    private variable LiquidClassArray[];
    private variable SubmergeDepthArray[];
    private variable cLLDArray[];
    private variable ModeArray[];
    private variable pLLDArray[];
    private variable MixVolumeArray[];
    private variable MixPositionArray[];
    private variable LiquidFollowingArray[];
    private variable FixedHeightArray[];
    private variable SeqEnd;
    private variable ChannelNumberArray[];
    private variable CustomErrorHandling;
    private object o_JSONObject;
    private variable LabwareIDArray[];
    private variable PositionIDArray[];
    private variable Counter;
    private variable NumLabwareIDs;
    private variable RecoveryDetails;
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"), LabwareIDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PositionID:"), PositionIDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Volume:"), VolumeArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Mode:"), ModeArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidClass:"), LiquidClassArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CapacitiveLiquidLevelDetection:"), cLLDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SubmergeDepth:"), SubmergeDepthArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PressureLiquidLevelDetection:"), pLLDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MaxHeightDifference:"), MaxHeightDifferenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:FixHeightFromBottom:"), FixedHeightArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistanceForTransportAir:"), RetractDistanceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumber:"), ChannelNumberArray);
    ChannelSelection = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumberString:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidFollowing:"), LiquidFollowingArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixCycles:"), MixCyclesArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixPosition:"), MixPositionArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixVolume:"), MixVolumeArray);
    PadArray(VolumeArray, ChannelNumberArray);
    PadArray(ModeArray, ChannelNumberArray);
    PadArray(LiquidClassArray, ChannelNumberArray);
    PadArray(cLLDArray, ChannelNumberArray);
    PadArray(SubmergeDepthArray, ChannelNumberArray);
    PadArray(pLLDArray, ChannelNumberArray);
    PadArray(MaxHeightDifferenceArray, ChannelNumberArray);
    PadArray(FixedHeightArray, ChannelNumberArray);
    PadArray(RetractDistanceArray, ChannelNumberArray);
    PadArray(LiquidFollowingArray, ChannelNumberArray);
    PadArray(MixCyclesArray, ChannelNumberArray);
    PadArray(MixPositionArray, ChannelNumberArray);
    PadArray(MixVolumeArray, ChannelNumberArray);
    NumLabwareIDs=LabwareIDArray.GetSize();
    {
      for(Counter = 0; Counter < NumLabwareIDs;)
      {
        Counter = Counter + 1;
        SeqAdd(Sequence, LabwareIDArray.ElementAt( Counter -1), PositionIDArray.ElementAt( Counter -1));
      }
    }
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_1 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        	RecoveryDetails = arrRetValues[2];
      }
      errLabel_1 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        RecoveryDetails = ErrGetDataAt(3);
      }   /* end if from skip handler if no error */
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        	RecoveryDetails = arrRetValues[2];
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RawRecoveryDetails"), RecoveryDetails);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Dispense( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ChannelSelection;
    private variable SeqEnd;
    private sequence Sequence;
    private variable RetractDistanceArray[];
    private variable VolumeArray[];
    private variable MixCyclesArray[];
    private variable LiquidClassArray[];
    private variable SideTouchArray[];
    private variable SubmergeDepthArray[];
    private variable cLLDArray[];
    private variable ModeArray[];
    private variable ChannelNumberArray[];
    private variable MixVolumeArray[];
    private variable MixPositionArray[];
    private variable LiquidFollowingArray[];
    private variable FixedHeightArray[];
    private variable CustomErrorHandling;
    private object o_JSONObject;
    private variable LabwareIDArray[];
    private variable PositionIDArray[];
    private variable Counter;
    private variable NumLabwareIDs;
    private variable RecoveryDetails;
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"), LabwareIDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PositionID:"), PositionIDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Volume:"), VolumeArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Mode:"), ModeArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:FixHeightFromBottom:"), FixedHeightArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistanceForTransportAir:"), RetractDistanceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CapacitiveLiquidLevelDetection:"), cLLDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SubmergeDepth:"), SubmergeDepthArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SideTouch:"), SideTouchArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumber:"), ChannelNumberArray);
    ChannelSelection = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumberString:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidClass:"), LiquidClassArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidFollowing:"), LiquidFollowingArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixCycles:"), MixCyclesArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixPosition:"), MixPositionArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixVolume:"), MixVolumeArray);
    PadArray(VolumeArray, ChannelNumberArray);
    PadArray(ModeArray, ChannelNumberArray);
    PadArray(FixedHeightArray, ChannelNumberArray);
    PadArray(RetractDistanceArray, ChannelNumberArray);
    PadArray(cLLDArray, ChannelNumberArray);
    PadArray(SubmergeDepthArray, ChannelNumberArray);
    PadArray(SideTouchArray, ChannelNumberArray);
    PadArray(LiquidClassArray, ChannelNumberArray);
    PadArray(LiquidFollowingArray, ChannelNumberArray);
    PadArray(MixCyclesArray, ChannelNumberArray);
    PadArray(MixPositionArray, ChannelNumberArray);
    PadArray(MixVolumeArray, ChannelNumberArray);
    NumLabwareIDs=LabwareIDArray.GetSize();
    {
      for(Counter = 0; Counter < NumLabwareIDs;)
      {
        Counter = Counter + 1;
        SeqAdd(Sequence, LabwareIDArray.ElementAt( Counter -1), PositionIDArray.ElementAt( Counter -1));
      }
    }
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_2 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	RecoveryDetails = arrRetValues[2];
      }
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        RecoveryDetails = ErrGetDataAt(3);
      }   /* end if from skip handler if no error */
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        	RecoveryDetails = arrRetValues[2];
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RawRecoveryDetails"), RecoveryDetails);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Pickup( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ChannelSelection;
    private variable SeqEnd;
    private sequence Sequence;
    private variable ChannelNumberArray[];
    private variable CustomErrorHandling;
    private object o_JSONObject;
    private variable Counter;
    private variable NumLabwareIDs;
    private variable LabwareIDArray[];
    private variable PositionIDArray[];
    private variable RecoveryDetails;
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumber:"), ChannelNumberArray);
    ChannelSelection = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumberString:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"), LabwareIDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PositionID:"), PositionIDArray);
    NumLabwareIDs=LabwareIDArray.GetSize();
    {
      for(Counter = 0; Counter < NumLabwareIDs;)
      {
        Counter = Counter + 1;
        SeqAdd(Sequence, LabwareIDArray.ElementAt( Counter -1), PositionIDArray.ElementAt( Counter -1));
      }
    }
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_3 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        	RecoveryDetails = arrRetValues[2];
      }
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        RecoveryDetails = ErrGetDataAt(3);
      }   /* end if from skip handler if no error */
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        	RecoveryDetails = arrRetValues[2];
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RawRecoveryDetails"), RecoveryDetails);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Eject( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ChannelSelection;
    private variable SeqEnd;
    private sequence Sequence;
    private variable ChannelNumberArray[];
    private variable CustomErrorHandling;
    private object o_JSONObject;
    private variable Counter;
    private variable NumLabwareIDs;
    private variable LabwareIDArray[];
    private variable PositionIDArray[];
    private variable RecoveryDetails;
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumber:"), ChannelNumberArray);
    ChannelSelection = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumberString:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"), LabwareIDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PositionID:"), PositionIDArray);
    NumLabwareIDs=LabwareIDArray.GetSize();
    {
      for(Counter = 0; Counter < NumLabwareIDs;)
      {
        Counter = Counter + 1;
        SeqAdd(Sequence, LabwareIDArray.ElementAt( Counter -1), PositionIDArray.ElementAt( Counter -1));
      }
    }
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_4 ;
      err.Clear();
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        	RecoveryDetails = arrRetValues[2];
      }
      errLabel_4 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        RecoveryDetails = ErrGetDataAt(3);
      }   /* end if from skip handler if no error */
    }
    else
    {
      {
        	variable arrRetValues[];
        	arrRetValues = ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        	RecoveryDetails = arrRetValues[2];
      }
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RawRecoveryDetails"), RecoveryDetails);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "Pickup")
    {
      Pickup(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Aspirate")
    {
      Aspirate(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Dispense")
    {
      Dispense(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Eject")
    {
      Eject(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "FW_AspDis")
    {
      FW_AspDis(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "GetLastLiquidLevel")
    {
      GetLastLiquidLevel(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "MoveToPositionSequence")
    {
      MoveToPositionSequence(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }

  private function FW_AspDis( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable DispenseVariable;
    private variable DispenseBlowoutVolume;
    private variable DispenseTraverseBeforeDispense;
    private variable DispenseFixHeightFromBottom;
    private variable AspirateFixHeightFromBottom;
    private variable SettlingTimeStoppable;
    private variable AspirateRetractDistanceForTransportAir;
    private variable CustomErrorHandling;
    private variable DispenseVolume;
    private variable LLDSearchHeight;
    private variable AspirateBlowoutVolume;
    private variable DispenseTraverseAfterDispense;
    private variable LiquidClass;
    private variable AspirateTraverseBeforeAspirate;
    private variable DispenseAdditionalSettlingTime;
    private variable SeqEnd;
    private variable AspirateVolume;
    private variable AspirateTraverseAfterAspirate;
    private variable AspirateAdditionalSettlingTime;
    private variable AspirateVariable;
    private sequence Sequence;
    private variable ChannelSelection;
    private variable Counter;
    private variable NumLabwareIDs;
    private variable LabwareIDArray[];
    private variable PositionIDArray[];
    ChannelSelection = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumberString:"));
    LLDSearchHeight = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LLDSearchHeight:"));
    LiquidClass = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidClass:"));
    SettlingTimeStoppable = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SettlingTimeStoppable:"));
    AspirateVariable = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Aspirate:"));
    AspirateTraverseBeforeAspirate = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateTraverseBeforeAspirate:"));
    AspirateTraverseAfterAspirate = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateTraverseAfterAspirate:"));
    AspirateFixHeightFromBottom = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateFixHeightFromBottom:"));
    AspirateRetractDistanceForTransportAir = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateRetractDistanceForTransportAir:"));
    AspirateVolume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateVolume:"));
    AspirateAdditionalSettlingTime = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateAdditionalSettlingTime:"));
    AspirateBlowoutVolume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:AspirateBlowoutVolume:"));
    DispenseVariable = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Dispense:"));
    DispenseTraverseBeforeDispense = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseTraverseBeforeDispense:"));
    DispenseTraverseAfterDispense = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseTraverseAfterDispense:"));
    DispenseFixHeightFromBottom = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseFixHeightFromBottom:"));
    DispenseVolume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseVolume:"));
    DispenseAdditionalSettlingTime = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseAdditionalSettlingTime:"));
    DispenseBlowoutVolume = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:DispenseBlowoutVolume:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"), LabwareIDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PositionID:"), PositionIDArray);
    NumLabwareIDs=LabwareIDArray.GetSize();
    {
      for(Counter = 0; Counter < NumLabwareIDs;)
      {
        Counter = Counter + 1;
        SeqAdd(Sequence, LabwareIDArray.ElementAt( Counter -1), PositionIDArray.ElementAt( Counter -1));
      }
    }
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_5 ;
      err.Clear();
      STAR_CHANNEL_MPH_FWCMD::_Channels_Asp_Disp(ChannelSelection, AspirateVariable, DispenseVariable, Sequence, AspirateTraverseBeforeAspirate, AspirateTraverseAfterAspirate, DispenseTraverseBeforeDispense, DispenseTraverseAfterDispense, LiquidClass, LLDSearchHeight, AspirateFixHeightFromBottom, AspirateRetractDistanceForTransportAir, AspirateVolume, AspirateBlowoutVolume, AspirateAdditionalSettlingTime, DispenseFixHeightFromBottom, DispenseVolume, DispenseBlowoutVolume, DispenseAdditionalSettlingTime, SettlingTimeStoppable, ML_STAR);
      errLabel_5 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
      }   /* end if from skip handler if no error */
    }
    else
    {
      STAR_CHANNEL_MPH_FWCMD::_Channels_Asp_Disp(ChannelSelection, AspirateVariable, DispenseVariable, Sequence, AspirateTraverseBeforeAspirate, AspirateTraverseAfterAspirate, DispenseTraverseBeforeDispense, DispenseTraverseAfterDispense, LiquidClass, LLDSearchHeight, AspirateFixHeightFromBottom, AspirateRetractDistanceForTransportAir, AspirateVolume, AspirateBlowoutVolume, AspirateAdditionalSettlingTime, DispenseFixHeightFromBottom, DispenseVolume, DispenseBlowoutVolume, DispenseAdditionalSettlingTime, SettlingTimeStoppable, ML_STAR);
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function PadArray( variable & io_Array[], variable & PadIndices[] ) void {
    private variable IndiceCounter;
    private variable Counter;
    private variable PadValue;
    private variable NumIndices;
    private variable Temp[];
    if(0){
      Temp=io_Array;
      PadValue=Temp.GetAt(1-1);
      io_Array.SetSize(0);
      NumIndices=PadIndices.GetSize();
      Counter = 1;
      {
        for(IndiceCounter = 0; IndiceCounter < NumIndices;)
        {
          IndiceCounter = IndiceCounter + 1;
          if (PadIndices.ElementAt( IndiceCounter -1) == "0")
          {
            io_Array.AddAsLast(PadValue);
          }
          else
          {
            io_Array.AddAsLast(Temp.ElementAt( Counter -1));
            Counter = Counter + 1;
          }
        }
      }
    }
    Temp=io_Array;
    PadValue=Temp.GetAt(1-1);
    io_Array.SetSize(0);
    NumIndices=PadIndices.GetSize();
    Counter = 1;
    for(IndiceCounter = 0; IndiceCounter < NumIndices;)
    {
         IndiceCounter = IndiceCounter + 1;
         if (PadIndices.ElementAt( IndiceCounter -1) == "0")
         {
              io_Array.AddAsLast(PadValue);
         }
         else
         {
           io_Array.AddAsLast(Temp.ElementAt( Counter -1));
           Counter = Counter + 1;
         }
    }
  }

  private function GetLastLiquidLevel( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable RecoveryDetails;
    {
      	variable arrRetValues[];
      	arrRetValues = ML_STAR._9FB6DFE0_4132_4d09_B502_98C722734D4C("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"); // GetLastLiquidLevel
      	RecoveryDetails = arrRetValues[2];
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RawChannelLiquidLevels"), RecoveryDetails);
    STATESERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function MoveToPositionSequence( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private object o_JSONObject;
    private variable RecoveryDetails;
    private variable CustomErrorHandling;
    private variable ZMode;
    private variable LabwareID;
    private sequence Sequence;
    LabwareID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LabwareID:"));
    ZMode = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ZMode:"));
    HSLLabwrAccess::GetDefaultSequenceForLabwareID(ML_STAR, LabwareID, 0, Sequence);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_6 ;
      err.Clear();
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
      errLabel_6 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        RecoveryDetails = ErrGetDataAt(3);
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._81DA4252_3BA9_11d4_AE21_0004ACB1DCB2("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"); // MoveToPosition
    }
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("RawRecoveryDetails"), RecoveryDetails);
    ACTIONSERVERENDPOINTS::RespondToCommand(o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }
} // library namespace
