private function ActionServer(  ) void ;
function ServeRequest( object & i_JSONObject ) void ;
private function StateServer(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
}

private function ActionServer(  ) void {
  private object JSONObject;
  private variable IsReady;
  private variable None;
  private variable Return;
  {
    None = 0;
    while ("Infinite" == "Infinite")
    {
      None = None + 1;
      IsReady = ACTIONSERVERENDPOINTS::GetNextCommand(600, JSONObject);
      if (IsReady != 0)
      {
        LOGGER::TraceComment(Translate("Action Server Command Processing"));
        ServeRequest(JSONObject);
      }
      else
      {
        Return = ACTIONSERVERENDPOINTS::ServerIsAlive();
        if (Return == 0)
        {
          MECC::TraceComment(Translate("ActionServer does not appear to be running... Aborting."));
          abort;
        }
      }
    }
  }
}

private function StateServer(  ) void {
  private object JSONObject;
  private variable IsReady;
  private variable None;
  private variable Return;
  {
    None = 0;
    while ("Infinite" == "Infinite")
    {
      None = None + 1;
      IsReady = STATESERVERENDPOINTS::GetNextCommand(600, JSONObject);
      if (IsReady != 0)
      {
        LOGGER::TraceComment(Translate("State Server Command Processing"));
        ServeRequest(JSONObject);
      }
      else
      {
        Return = STATESERVERENDPOINTS::ServerIsAlive();
        if (Return == 0)
        {
          MECC::TraceComment(Translate("StateServer does not appear to be running... Aborting."));
          abort;
        }
      }
    }
  }
}

function ServeRequest( object & i_JSONObject ) void {
  private variable CommandName;
  private variable ModuleName;
  private variable JSONObjectString;
  MECC::TraceComment(Translate("\n\n###################### START COMMAND ###################### "));
  HSLJsonLib::GetJson(i_JSONObject, JSONObjectString);
  TrcTrace(Translate(""), JSONObjectString);
  ModuleName = JSONPARSER::GetJSONElement(i_JSONObject, Translate("Module Name:"));
  CommandName = JSONPARSER::GetJSONElement(i_JSONObject, Translate("Command Name:"));
  if (ModuleName == "HAMILTON")
  {
    ACTIONSERVERENDPOINTS::RespondToCommand(i_JSONObject);
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@\n\n       .__(.)< (MEOW)\n        \\___)\n\nAbort command received. Goodbye!\n\n              .__(.)< (MEOW)\n               \\___)\n\n@@@@@@@@@@@@@@@@"));
    abort;
    return;
  }
  if (ModuleName == "HAMILTON EntryExit")
  {
    ENTRYEXIT::HandleCommand(ML_STAR, EntryExit, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON FlipTubeTool")
  {
    FLIPTUBETOOL::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON General Timer")
  {
    TIMER::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON HamiltonHeaterCooler")
  {
    HAMILTONHEATERCOOLER::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON HSL_LiquidClassLib")
  {
    HSL_LIQUIDCLASSLIB::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON HSLHamHeaterShakerLib")
  {
    _HSLHAMHEATERSHAKERLIB::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON HSLHiGCentrifugeLib")
  {
    HSLHIGCENTRIFUGELIB::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON HSLLabwrAccess")
  {
    HSLLABWRACCESS::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON HSLML_STARLib")
  {
    HSLML_STARLIB::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON HSLTipCountingLib")
  {
    _HSLTIPCOUNTINGLIB::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON HSLVacuuBrandPump")
  {
    HSLVACUUBRANDPUMP::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON ML_STAR Channel1000uL")
  {
    CHANNEL1000UL::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON ML_STAR CORE96Head")
  {
    CORE96HEAD::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON ML_STAR Channel1000uLCOREGrip")
  {
    CHANNEL1000ULCOREGRIP::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON ML_STAR iSwap")
  {
    ISWAP::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON ML_STAR Autoload")
  {
    AUTOLOAD::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON ML_STAR ML_STAR")
  {
    ML_STAR::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON PlateEditor96")
  {
    _PLATEEDITOR96::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON SetCuttedTipType")
  {
    CUTTEDTIPTYPE::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON TrackGripper")
  {
    TRACKGRIPPER::HandleCommand(ML_STAR, TrackGripper, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON Visual_NTR_Library")
  {
    _VISUAL_NTR_LIBRARY::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  if (ModuleName == "HAMILTON DeckLoadingDialog")
  {
    DECKLOADINGDIALOG::HandleCommand(ML_STAR, CommandName, i_JSONObject);
    return;
  }
  MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nModule not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
  abort;
}
